PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['WORKER ID'], expName, expInfo['date'])
  Experiment info = {'WORKER ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['bank-1300155_640.png']
  Screen = 1
  Units = pix
  Window size (pixels) = [1366, 768]
  expName = peripheral_visual_search
  logging level = debug
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Routines
  Routine rectangle
    TextComponent text
      letterHeight = 0.07
      pos = (0, -.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        This shape should be a 10 cm square.
        Component size  (10*x_scale, 10*y_scale) set every repeat.
        Press space to continue
    PolygonComponent polygon
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent rectangle_key_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine gitter
    CodeComponent draw_fixation
      Code Type = Both
      Begin JS Routine:
        fixation_point.fillColor = [(- 0.498), (- 0.498), (- 0.498)];
        fixation_point.lineColor = [(- 0.498), (- 0.498), (- 0.498)];
        fixation_point.setAutoDraw(true);
      Begin Routine:
        fixation_point.fillColor = (-0.4980, -0.4980, -0.4980)
        fixation_point.lineColor = (-0.4980, -0.4980, -0.4980)
      Each Frame:
        fixation_point.draw()
      End JS Routine:
        fixation_point.setAutoDraw(false);
    CodeComponent change_fixation_color
      Code Type = Both
      End JS Routine:
        fixation_point.fillColor = [0.5059, 0.5059, 0.5059];
        fixation_point.lineColor = [0.5059, 0.5059, 0.5059];
      End Routine:
        fixation_point.fillColor = (0.5059, 0.5059, 0.5059)
        fixation_point.lineColor = (0.5059, 0.5059, 0.5059)
    MouseComponent mouse
      clickable = eval("fixation_point")
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent gitter_text
      contrast = 10000
      letterHeight = an2pix * 0.7
      pos = (0, -an2pix * 1.5)
      startVal [time (s)] = 0.0
      text = Click the center circle to start.
      wrapWidth = 10000
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    CodeComponent set_mouse
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        mouse.setVisible(True)
      End JS Routine:
        document.body.style.cursor='none';
      End Routine:
        mouse.setVisible(False)
  Routine screenScale
    CodeComponent code_JS
      Code Type = Both
      Begin JS Experiment:
        event=psychoJS.eventManager;
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
    CodeComponent code_scale
      Code Type = Both
      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=50
            y_scale=50
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1

        an2pix = 50
      Begin JS Experiment:
        oldt = 0;
        x_size = 8.56;
        y_size = 5.398;
        screen_height = 0;
        if ((win.units === "norm")) {
            x_scale = 0.05;
            y_scale = 0.1;
            dbase = 0.0001;
            unittext = " norm units";
            vsize = 2;
        } else {
            if ((win.units === "pix")) {
                x_scale = 50;
                y_scale = 50;
                dbase = 0.1;
                unittext = " pixels";
                vsize = win.size[1];
            } else {
                x_scale = 0.05;
                y_scale = 0.05;
                dbase = 0.0001;
                unittext = " height units";
                vsize = 1;
            }
        }
        an2pix = 50;
      Begin JS Routine:
        event.clearEvents();
        resz = (an2pix / ((x_scale + y_scale) / 2));
        distance = Number.parseInt((resz / (2 * Math.tan((Math.PI / 360)))));
        text_bottom.text = (("Throughout this experiment, \n please maintain a viewing distance at " + distance.toString()) + "cm.");
      Begin Routine:
        event.clearEvents()

        resz = an2pix / ((x_scale + y_scale) / 2)
        distance = int(resz / (2 * math.tan(math.pi / 360)))
        text_bottom.text= 'Throughout this experiment, \n please maintain a viewing distance at ' + str(distance) + 'cm.'
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys and t > 1:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000

            # Added manually
            if win.units=='pix':
                vsize=win.size[1] / 2

            screen_height=round(vsize*10/y_scale)/10
            resz = an2pix / ((x_scale + y_scale) / 2)
            distance = int(resz / (2 * math.tan(math.pi / 360)))

            text_bottom.text= 'Throughout this experiment, \n please maintain a viewing distance at ' + str(distance) + 'cm.'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (((t - oldt) < 0.5)) {
                dscale = (5 * dbase);
                oldt = t;
            } else {
                dscale = dbase;
                oldt = t;
            }
            if ((_pj.in_es6("space", keys) && (t > 1))) {
                continueRoutine = false;
            } else {
                if (_pj.in_es6("up", keys)) {
                    y_scale = (round(((y_scale + dscale) * 10000)) / 10000);
                } else {
                    if (_pj.in_es6("down", keys)) {
                        y_scale = (round(((y_scale - dscale) * 10000)) / 10000);
                    } else {
                        if (_pj.in_es6("left", keys)) {
                            x_scale = (round(((x_scale - dscale) * 10000)) / 10000);
                        } else {
                            if (_pj.in_es6("right", keys)) {
                                x_scale = (round(((x_scale + dscale) * 10000)) / 10000);
                            }
                        }
                    }
                }
            }
            if ((win.units === "pix")) {
                vsize = (win.size[1] / 2);
            }
            screen_height = (round(((vsize * 10) / y_scale)) / 10);
            resz = (an2pix / ((x_scale + y_scale) / 2));
            distance = Number.parseInt((resz / (2 * Math.tan((Math.PI / 360)))));
            text_bottom.text = (("Throughout this experiment, \n please maintain a viewing distance at " + distance.toString()) + "cm.");
            ccimage.size = [(x_size * x_scale), (y_size * y_scale)];
        }
      End JS Routine:
        thisExp.addData("X Scale", x_scale);
        thisExp.addData("Y Scale", y_scale);
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.07
      pos = (0, .6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card
        Up arrow for taller
        Down arrow for shorter
        Left arrow for narrower
        Right arrow for wider
    TextComponent text_middle
      letterHeight = 0.07
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Press "Space" key when done.
      units = norm
      wrapWidth = 1.5
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    TextComponent text_bottom
      color = springgreen
      letterHeight = 0.07
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = html/resources/bank-1300155_640.png
      saveStartStop = False
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine expIntro
    CodeComponent define_functions
      Code Type = Both
      Before Experiment:
        def calc_idx_list(non_target_classes, target_class, num):
            idx = list(range(101, 101 + num))
            idx = list(map(lambda x: str(x)[1:], idx))
            idx_list = {}
            for i in range(len(non_target_classes)):
                idx_list[non_target_classes[i]] = random.sample(idx, len(idx))
            idx_list[target_class] = random.sample(idx, len(idx))
            return idx_list
      Before JS Experiment:
        const range = (start, end) => [...Array((end - start) + 1)].map((_, i) => start + i);

        const shuffle = ([...array]) => {
            for (let i = array.length - 1; i >= 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [array[i], array[j]] = [array[j], array[i]];
            }
            return array;
        }

        const calcRad = (deg) => {
            return deg * (Math.PI / 180);
        }
    CodeComponent set_variables
      Code Type = Both
      Before Experiment:
        import random
      Begin Experiment:
        dataset_classes = {
            0: "bear",
            1: "cat",
            2: "dog",
            3: "elephant",
            4: "hamster",
            5: "monkey",
            6: "rabbit",
            7: "sheep"
        }

        num_to_class = ["bear", "cat", "dog", "elephant", "hamster", "monkey", "rabbit", "sheep"]

        ans_keys_list = [['b', 'a', 'c', 'd'], ['g', 'e', 'f', 'h'], ['j', 'i', 'k', 'l']]
        key_to_pos = {}
        for i in range(len(ans_keys_list)):
            for j in range(len(ans_keys_list[i])):
                key_to_pos[ans_keys_list[i][j]] = [i, j]

        ans_text_list = ['2', '1', '3', '4', '7', '5', '6', '8', '10', '9', '11', '12']

        intro_state = -1
        reps = 0
      Begin JS Experiment:
        dataset_classes = {
            0: "bear",
            1: "cat",
            2: "dog",
            3: "elephant",
            4: "hamster",
            5: "monkey",
            6: "rabbit",
            7: "sheep"
        };

        num_to_class = ["bear", "cat", "dog", "elephant", "hamster", "monkey", "rabbit", "sheep"];

        ans_keys_list = [["b", "a", "c", "d"], ["g", "e", "f", "h"], ["j", "i", "k", "l"]];
        key_to_pos = {};
        for (var i = 0, _pj_a = ans_keys_list.length; (i < _pj_a); i += 1) {
            for (var j = 0, _pj_b = ans_keys_list[i].length; (j < _pj_b); j += 1) {
                key_to_pos[ans_keys_list[i][j]] = [i, j];
            }
        }

        ans_text_list = ["2", "1", "3", "4", "7", "5", "6", "8", "10", "9", "11", "12"];

        intro_state = -1;
        count = 0;
    CodeComponent calc_ecc
      Code Type = Both
      Before Experiment:
        import math
      Begin Experiment:
        eccentricity_level_0 = round(math.sqrt(2), 2)
        eccentricity_level_1 = round(1 + math.sqrt(8), 2)
        eccentricity_level_2 = round((math.sqrt(2) + 4 + math.sqrt((math.sqrt(2) + 4) ** 2 - 4 * (4 * math.sqrt(2) - 27))) / 2, 2)
        eccentricities = [
            eccentricity_level_0,
            eccentricity_level_1,
            eccentricity_level_2
        ]
      Begin JS Experiment:
        eccentricity_level_0 = Math.round(Math.sqrt(2) * 100) / 100;
        eccentricity_level_1 = Math.round((1 + Math.sqrt(8)) * 100) / 100;
        eccentricity_level_2 = Math.round(((Math.sqrt(2) + 4 + Math.sqrt(Math.pow((Math.sqrt(2) + 4), 2) - 4 * (4 * Math.sqrt(2) - 27))) / 2) * 100) / 100;
        eccentricities = [eccentricity_level_0, eccentricity_level_1, eccentricity_level_2];
    ImageComponent stimuli
      image = html/resources/imagenet/practice/1/practice_2.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (1200, 1200)
      startVal [time (s)] = 0.0
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    ImageComponent stimuli_arrangement
      image = html/resources/stimuli_arrangement.png
      opacity = 0.0
      saveStartStop = False
      size = (an2pix, an2pix)
      startVal [time (s)] = 0.0
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    CodeComponent set_stimulus_arrangement
      Code Type = Both
      Begin JS Routine:
        stimuli_arrangement.size = [
            an2pix * (2 * eccentricities[2] / Math.sqrt(2) + 8),
            an2pix * (2 * eccentricities[2] / Math.sqrt(2) + 8)
        ];
      Begin Routine:
        stimuli_arrangement.size = (
            an2pix * (2 * eccentricities[2] / math.sqrt(2) + 8),
            an2pix * (2 * eccentricities[2] / math.sqrt(2) + 8),
        )
    TextComponent ans_0_0
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_0_1
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_0_2
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_0_3
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_1_0
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_1_1
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_1_2
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_1_3
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_2_0
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_2_1
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_2_2
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_2_3
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent set_ans_text_position
      Code Type = Both
      Begin JS Routine:
        ans_list = [ans_0_0, ans_0_1, ans_0_2, ans_0_3, ans_1_0, ans_1_1, ans_1_2, ans_1_3, ans_2_0, ans_2_1, ans_2_2, ans_2_3];

        for (var i = 0, _pj_a = ans_list.length; (i < _pj_a); i += 1) {
            if (i < 4) {
                ans_list[i].pos = [
                    an2pix * eccentricities[0] * Math.cos(calcRad((i % 4) * 90 + 45)),
                    an2pix * eccentricities[0] * Math.sin(calcRad((i % 4) * 90 + 45))
                ];
            } else {
                if ((4 <= i) && (i < 8)) {
                    ans_list[i].pos = [
                        an2pix * eccentricities[1] * Math.cos(calcRad((i % 4) * 90)),
                        an2pix * eccentricities[1] * Math.sin(calcRad((i % 4) * 90))
                    ];
                } else {
                    ans_list[i].pos = [
                        an2pix * eccentricities[2] * Math.cos(calcRad((i % 4) * 90 + 45)),
                        an2pix * eccentricities[2] * Math.sin(calcRad((i % 4) * 90 + 45))
                    ];
                }
            }
        }
      Begin Routine:
        ans_list = [
            ans_0_0,
            ans_0_1,
            ans_0_2,
            ans_0_3,
            ans_1_0,
            ans_1_1,
            ans_1_2,
            ans_1_3,
            ans_2_0,
            ans_2_1,
            ans_2_2,
            ans_2_3
        ]

        for i in range(len(ans_list)):
            if i < 4:
                ans_list[i].pos = (
                    an2pix * eccentricities[0] * math.cos(math.radians(i % 4 * 90 + 45)),
                    an2pix * eccentricities[0] * math.sin(math.radians(i % 4 * 90 + 45))
                )
            elif 4 <= i < 8:
                ans_list[i].pos = (
                    an2pix * eccentricities[1] * math.cos(math.radians(i % 4 * 90)),
                    an2pix * eccentricities[1] * math.sin(math.radians(i % 4 * 90))
                )
            else:
                ans_list[i].pos = (
                    an2pix * eccentricities[2] * math.cos(math.radians(i % 4 * 90 + 45)),
                    an2pix * eccentricities[2] * math.sin(math.radians(i % 4 * 90 + 45))
                )
    CodeComponent ans_to_pos
      Code Type = Auto->JS
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      Begin Routine:
        ans_to_pos = {}
        for i in range(len(ans_list)):
            ans_to_pos[ans_list[i].name] = [int(i / 4) % 3, i % 4]
    PolygonComponent fixation_point
      fillColor = $(0.5059, 0.5059, 0.5059)
      lineColor = $(0.5059, 0.5059, 0.5059)
      nVertices = 100
      opacity [set every repeat] = 0.0
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (an2pix / 3, an2pix / 3)
      startVal [time (s)] = 0.0
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    TextComponent introduction_text
      letterHeight = an2pix * 0.6
      pos = (0, 2 * an2pix)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 10000
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    TextComponent back_text
      letterHeight = an2pix * 0.5
      pos = (0, -2 * an2pix)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent set_introduction
      Code Type = Both
      Each Frame:
        keys = [""]
        keys += event.getKeys(keyList=["space", "b"])

        if keys[-1] == "space":
            intro_state += 1
        if keys[-1] == "b":
            intro_state -= 1
        if intro_state < 0:
            intro_state = 0

        if intro_state == 0:
            introduction_text.text = 'This experiment consists of the two tasks. \n The task 1 is \n "To find your favorite image from animal images."'
            introduction_text.pos = (0, 2 * an2pix)
            back_text.text = 'Next: "Space" Key'
            back_text.pos = (0, -2 * an2pix)
            fixation_point.opacity = 0.0
        if intro_state == 1:
            introduction_text.text = 'Click the center circle to display a lineup of images.'
            introduction_text.pos = (0, 4.5 * an2pix)
            back_text.text = 'Next: "Space" Key \n Back: "b" Key'
            back_text.pos = (0, -4.5 * an2pix)
            fixation_point.opacity = 1.0
            stimuli.opacity = 0.0
        if intro_state == 2:
            introduction_text.text = 'When you find your favorite image, \n click your mouse. \n\n The time limit is 3 sec on each trial.'
            introduction_text.pos = (9 * an2pix, 0)
            back_text.pos = (-9 * an2pix, 0)
            stimuli.opacity = 1.0
            stimuli_arrangement.opacity = 0.0
            for i in range(len(ans_list)):
                ans_list[i].text = ''
        if intro_state == 3:
            introduction_text.text = 'Then, click a number \n corresponding to \n the position.'
            fixation_point.opacity = 0.0
            stimuli_arrangement.opacity = 1.0
            for i in range(len(ans_list)):
                ans_list[i].text = ans_text_list[i]
        if intro_state == 4:
            fixation_point.opacity = 1.0
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["space", "b"]});

        if (keys.slice(-1)[0] === "space") {
            intro_state += 1;
        }
        if (keys.slice(-1)[0] === "b") {
            intro_state -= 1;
        }
        if (intro_state < 0) {
            intro_state = 0;
        }

        if (intro_state === 0) {
            introduction_text.text = "This expeirment consists of the two tasks. \n The task 1 is \n \"To find your favorite image from animal images.\" ";
            introduction_text.pos = [0, (2 * an2pix)];
            back_text.text = "Next: \"Space\" Key";
            back_text.pos = [0, ((- 2) * an2pix)];
            fixation_point.opacity = 0.0;
        }
        if (intro_state === 1) {
            introduction_text.text = "Click the center circle to display a lineup of images.";
            introduction_text.pos = [0, (4.5 * an2pix)];
            back_text.text = "Next: \"Space\" Key \n Back: \"b\" Key";
            back_text.pos = [0, ((- 4.5) * an2pix)];
            fixation_point.opacity = 1.0;
            stimuli.opacity = 0.0;
        }
        if (intro_state === 2) {
            introduction_text.text = "When you find your favorite image, \n click your mouse. \n\n The time limit is 3 sec \n on each trial.";
            introduction_text.pos = [(9 * an2pix), 0];
            back_text.pos = [((- 9) * an2pix), 0];
            stimuli.opacity = 1.0;
            stimuli_arrangement.opacity = 0.0;
            for (var i = 0, _pj_a = ans_list.length; (i < _pj_a); i += 1) {
                ans_list[i].text = "";
            }
        }
        if (intro_state === 3) {
            introduction_text.text = "Then, click a number \n corresponding to \n the position.";
            fixation_point.opacity = 0.0;
            stimuli_arrangement.opacity = 1.0;
            for (var i = 0, _pj_a = ans_list.length; (i < _pj_a); i += 1) {
                ans_list[i].text = ans_text_list[i];
            }
        }
        if (intro_state === 4) {
            fixation_point.opacity = 1.0;
            continueRoutine = false;
        }
      End JS Routine:
        intro_state = 0;
      End Routine:
        intro_state = 0
  Routine showFeedback
    TextComponent feedback_text
      letterHeight = an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = feedback text
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    KeyboardComponent show_fb_key_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent change_feedback
      Code Type = Auto->JS
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      Begin Routine:
        feedback_text.text = ans_to_pos[ans_mouse.clicked_name[0]]
  Routine takeBreak
    TextComponent break_text
      letterHeight = an2pix * 0.7
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      wrapWidth = 10000
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      text:
        Please take a short break.

        Once the experiment is ready,
        the window will change to the fixation point.
    CodeComponent show_break_text
      Code Type = Both
      Begin JS Routine:
        count += 1;
        if (((count + 1) % 80) !== 0) {
            continueRoutine = false;
        }
        if ((count + 1) === 160) {
            continueRoutine = false;
        }
      Begin Routine:
        count += 1
        if (count + 1) % 80 != 0 or (count + 1) == 160:
            continueRoutine = False
      Each Frame:
        # if takeBreakClock.getTime() > 30:
        #     continueRoutine = False
      Each JS Frame:
        // if ((takeBreakClock.getTime() > 30)) {
        //     continueRoutine = false;
        // }
  Routine publishSurveyCode
    TextComponent show_thanks_and_code
      letterHeight = an2pix * 0.7
      startVal [time (s)] = 0.0
      wrapWidth = 10000
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    CodeComponent create_code
      Code Type = Both
      Begin JS Routine:
        survey_code = "";
        for (var i = 0, _pj_a = 6; (i < _pj_a); i += 1) {
            survey_code += (Math.floor(Math.random() * 10)).toString();
        }
        show_thanks_and_code.text = (("The experiment has finished. \n Thank you for your patience. \n\n Your survey code is " + survey_code) + ". \n\n Please type this code to this experiment page \n on amazon mturk. \n If you done, press \"f\" key to finish the experiment.");
        thisExp.addData("surveyCode", survey_code);
      Begin Routine:
        survey_code = ''
        for i in range(6):
            survey_code += str(random.randrange(0, 10))

        show_thanks_and_code.text = 'The experiment has finished. \n Thank you for your patience. \n\n Your survey code is ' + survey_code + '. \n\n Please type this code to this experiment page \n on amazon mturk. \n If you done, press "f" key to finish the experiment.'
        thisExp.addData('surveyCode',survey_code)
    KeyboardComponent finish_key_resp
      allowedKeys = 'f'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine actualIntro1
    TextComponent introduction_text_a1
      letterHeight = an2pix * 0.7
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 10000
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      text:
        Practice part has finished.

        Next part is the actual experiment.

        The task 1 has 160 trials in total.
        You’ll take a short break after 80 trials.

        Hit 's' Key when ready.
    KeyboardComponent actual_intro_key_resp1
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent set_count1
      Code Type = Auto->JS
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      Begin Routine:
        count = 0
  Routine showStim1
    CodeComponent change_stimuli
      Code Type = Both
      Before Experiment:
        from PIL import Image
      Begin JS Routine:
        if (currentLoop.name == "PracticeTrials1") {
            image_path = `imagenet/practice/1/practice_${presented_class}.png`;
        } else {
            if (magnified === 1) {
                image_path = `imagenet/2/magnified/${num_to_class[presented_class]}/${num_to_class[presented_class]}_1${image_n}.png`;
            } else {
                image_path = `imagenet/2/standard/${num_to_class[presented_class]}/${num_to_class[presented_class]}_${image_n}.png`;
            }
        }
        stimuli.setImage(image_path);

        thisExp.addData("stimuli", image_path);
      Begin Routine:
        if currentLoop.name == 'PracticeTrials1':
            image_path = 'html/resources/imagenet/practice/1/practice_{}.png'.format(presented_class)
        else:
            if magnified == 1:
                image_path = 'html/resources/imagenet/2/magnified/{}/{}_1{}.png'.format(num_to_class[presented_class],num_to_class[presented_class],image_n)
            else:  # magnified == 0
                image_path = 'html/resources/imagenet/2/standard/{}/{}_{}.png'.format(num_to_class[presented_class],num_to_class[presented_class],image_n)
        stimuli.image = Image.open(image_path)

        thisExp.addData('stimuli', image_path)
    CodeComponent draw_and_flip
      Code Type = Both
      Begin JS Routine:
        fixation_point.setAutoDraw(true);
      Each Frame:
        fixation_point.draw()

        if showStim1Clock.getTime() > 1:
            stimuli.draw()
      Each JS Frame:
        if (showStim1Clock.getTime() > 1) {
            stimuli.setAutoDraw(true);
        }
      End JS Routine:
        fixation_point.setAutoDraw(false);
        stimuli.setAutoDraw(false);
    KeyboardComponent show_stim_key_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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    CodeComponent store_rt
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('reactionTime', showStim1Clock.getTime() - 1)
    CodeComponent force_change
      Code Type = Auto->JS
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      Each Frame:
        # Time limit: 6 seconds
        if showStim1Clock.getTime() > 4:
            continueRoutine = False
  Routine askQuestion1
    TextComponent question_text
      letterHeight = an2pix * 0.5
      pos = (10 * an2pix, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 10000
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      text:
        Where was your favorite image?
        Please click the number.
    CodeComponent place_arrangement
      Code Type = Both
      Begin JS Routine:
        stimuli_arrangement.setAutoDraw(true);
      Each Frame:
        stimuli_arrangement.draw()
      End JS Routine:
        stimuli_arrangement.setAutoDraw(false);
    CodeComponent place_ans_text
      Code Type = Both
      Begin JS Routine:
        for (var i = 0, _pj_a = ans_list.length; (i < _pj_a); i += 1) {
            ans_list[i].text = ans_text_list[i];
        }

        for (var i = 0, _pj_a = ans_list.length; (i < _pj_a); i += 1) {
            ans_list[i].setAutoDraw(true);
        }
      Begin Routine:
        for i in range(len(ans_list)):
            ans_list[i].text = ans_text_list[i]
      Each Frame:
        for i in range(len(ans_list)):
            ans_list[i].draw()
      End JS Routine:
        for (var i = 0, _pj_a = ans_list.length; (i < _pj_a); i += 1) {
            ans_list[i].setAutoDraw(false);
        }
    MouseComponent ans_mouse
      clickable = eval("ans_0_0"), eval("ans_0_1"), eval("ans_0_2"), eval("ans_0_3"), eval("ans_1_0"), eval("ans_1_1"), eval("ans_1_2"), eval("ans_1_3"), eval("ans_2_0"), eval("ans_2_1"), eval("ans_2_2"), eval("ans_2_3")
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.1
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    CodeComponent set_mouse2
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        mouse.setVisible(True)
      End JS Routine:
        document.body.style.cursor='none';
      End Routine:
        mouse.setVisible(False)
  Routine showStim2
    CodeComponent change_stim
      Code Type = Both
      Before Experiment:
        from PIL import Image
      Begin JS Routine:
        if (currentLoop.name == "rankImages_p") {  // PracticeTrials2
            image_path = `imagenet/practice/one_level/practice_${presented_class}.png`;
        } else {  // ActualTrials2
            image_path = `imagenet/one_level/${num_to_class[presented_class]}/${num_to_class[presented_class]}_${image_n}.png`;
        }
        stimuli.setImage(image_path);

        thisExp.addData("stimuli", image_path);

        stimuli.setAutoDraw(true);
      Begin Routine:
        if currentLoop.name == 'rankImages_p':  # PracticeTrials2
            image_path = 'html/resources/imagenet/practice/one_level/practice_{}.png'.format(PracticeTrials2.thisN)
        else:  # ActualTrials2
            image_path = 'html/resources/imagenet/one_level/{}/{}_{}.png'.format(num_to_class[presented_class], num_to_class[presented_class], image_n)
        stimuli.image = Image.open(image_path)

        thisExp.addData('stimuli', image_path)
      Each Frame:
        stimuli.draw()
      End JS Routine:
        stimuli.setAutoDraw(false);
    CodeComponent show_squares
      Code Type = Both
      Begin JS Routine:
        for (var i = 0, _pj_a = square_list.length; (i < _pj_a); i += 1) {
            square_list[i].setAutoDraw(true);
        }
      Each Frame:
        for square in square_list:
            square.draw()
      End JS Routine:
        for (var i = 0, _pj_a = square_list.length; (i < _pj_a); i += 1) {
            square_list[i].setAutoDraw(false);
        }
    MouseComponent ans_mouse2
      clickable = clickable_list
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_text
      letterHeight = an2pix * 0.6
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 10000
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    CodeComponent set_mouse_text
      Code Type = Both
      Begin JS Routine:
        if (initial_flag) {
            document.body.style.cursor = 'none';
            _clickable_list = clickable_list;
            clickable_list = [];
            ans_text.text = '';
        }
      Begin Routine:
        if initial_flag:
            ans_mouse2.setVisible(False)
            ans_text.text = ""
      Each Frame:
        if initial_flag and showStim2Clock.getTime() > 3:
                ans_mouse2.setVisible(True)
                initial_flag = False

        if not initial_flag:
            if len(clickable_list) < 12:
                ans_text.text = "Choose the favorite image \n from the rest."
            else:
                ans_text.text = "Choose the favorite image."
      Each JS Frame:
        if ((initial_flag && (showStim2Clock.getTime() > 3))) {
            document.body.style.cursor='auto';
            clickable_list = _clickable_list;
            initial_flag = false;
            ans_text.text = 'Choose the favorite image.';
        }

        if (!initial_flag) {
            if (clickable_list.length < 12) {
                ans_text.text = 'Choose the favorite image \n from the rest.';
            } else {
                ans_text.text = 'Choose the favorite image.';
            }
        }
  Routine expIntro2
    CodeComponent set_variables2
      Code Type = Auto->JS
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      Begin Experiment:
        num_to_class = ["bear", "cat", "dog", "elephant", "hamster", "monkey", "rabbit", "sheep"]
    CodeComponent chaneg_example
      Code Type = Both
      Begin JS Routine:
        image_path = 'imagenet/practice/one_level/practice_0.png'
        stimuli.setImage(image_path);
      Begin Routine:
        image_path = 'html/resources/imagenet/practice/one_level/practice_0.png'
        stimuli.image = Image.open(image_path)
    PolygonComponent square_0_0
      fillColor = gray
      lineColor = gray
      saveStartStop = False
      shape = rectangle
      size = (an2pix * 2.5, an2pix * 2.5)
      startVal [time (s)] = 0.0
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    PolygonComponent square_0_1
      fillColor = gray
      lineColor = gray
      saveStartStop = False
      shape = rectangle
      size = (an2pix * 2.5, an2pix * 2.5)
      startVal [time (s)] = 0.0
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    PolygonComponent square_0_2
      fillColor = gray
      lineColor = gray
      saveStartStop = False
      shape = rectangle
      size = (an2pix * 2.5, an2pix * 2.5)
      startVal [time (s)] = 0.0
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    PolygonComponent square_0_3
      fillColor = gray
      lineColor = gray
      saveStartStop = False
      shape = rectangle
      size = (an2pix * 2.5, an2pix * 2.5)
      startVal [time (s)] = 0.0
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    PolygonComponent square_1_0
      fillColor = gray
      lineColor = gray
      saveStartStop = False
      shape = rectangle
      size = (an2pix * 2.5, an2pix * 2.5)
      startVal [time (s)] = 0.0
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    PolygonComponent square_1_1
      fillColor = gray
      lineColor = gray
      saveStartStop = False
      shape = rectangle
      size = (an2pix * 2.5, an2pix * 2.5)
      startVal [time (s)] = 0.0
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    PolygonComponent square_1_2
      fillColor = gray
      lineColor = gray
      saveStartStop = False
      shape = rectangle
      size = (an2pix * 2.5, an2pix * 2.5)
      startVal [time (s)] = 0.0
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    PolygonComponent square_1_3
      fillColor = gray
      lineColor = gray
      saveStartStop = False
      shape = rectangle
      size = (an2pix * 2.5, an2pix * 2.5)
      startVal [time (s)] = 0.0
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    PolygonComponent square_2_0
      fillColor = gray
      lineColor = gray
      saveStartStop = False
      shape = rectangle
      size = (an2pix * 2.5, an2pix * 2.5)
      startVal [time (s)] = 0.0
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    PolygonComponent square_2_1
      fillColor = gray
      lineColor = gray
      saveStartStop = False
      shape = rectangle
      size = (an2pix * 2.5, an2pix * 2.5)
      startVal [time (s)] = 0.0
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    PolygonComponent square_2_2
      fillColor = gray
      lineColor = gray
      saveStartStop = False
      shape = rectangle
      size = (an2pix * 2.5, an2pix * 2.5)
      startVal [time (s)] = 0.0
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    PolygonComponent square_2_3
      fillColor = gray
      lineColor = gray
      saveStartStop = False
      shape = rectangle
      size = (an2pix * 2.5, an2pix * 2.5)
      startVal [time (s)] = 0.0
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    CodeComponent set_square_pos_opc
      Code Type = Both
      Begin JS Routine:
        square_list = [square_0_0, square_0_1, square_0_2, square_0_3, square_1_0, square_1_1, square_1_2, square_1_3, square_2_0, square_2_1, square_2_2, square_2_3];
        ecc = 6;
        for (var i = 0, _pj_a = square_list.length; (i < _pj_a); i += 1) {
            square_list[i].pos = [
                an2pix * ecc * Math.cos(calcRad((i % 12) * 30)),
                an2pix * ecc * Math.sin(calcRad((i % 12) * 30))
            ];
            square_list[i].opacity = 0.0;
        }
      Begin Routine:
        square_list = [
            square_0_0,
            square_0_1,
            square_0_2,
            square_0_3,
            square_1_0,
            square_1_1,
            square_1_2,
            square_1_3,
            square_2_0,
            square_2_1,
            square_2_2,
            square_2_3
        ]

        ecc = 6
        for i in range(len(square_list)):
            square_list[i].pos = (
                an2pix * ecc * math.cos(math.radians(i % 12 * 30)),
                an2pix * ecc * math.sin(math.radians(i % 12 * 30)),
            )
            square_list[i].opacity = 0.0
    TextComponent introduction_text2
      letterHeight = an2pix * 0.5
      startVal [time (s)] = 0.0
      wrapWidth = 10000
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    TextComponent back_text2
      letterHeight = an2pix * 0.4
      startVal [time (s)] = 0.0
      wrapWidth = 10000
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    CodeComponent set_introduction2
      Code Type = Both
      Begin JS Routine:
        intro_state = -1;

        stimuli.opacity = 0.0;
        fixation_point.opacity = 0.0;
        stimuli.setAutoDraw(true);
        fixation_point.setAutoDraw(true);
      Begin Routine:
        intro_state = -1
      Each Frame:
        keys = [""]
        keys += event.getKeys(keyList=["space", "b"])

        if keys[-1] == "space":
            intro_state += 1
        if keys[-1] == "b":
            intro_state -= 1
        if intro_state < 0:
            intro_state = 0

        if intro_state == 0:
            introduction_text2.text = 'The task 1 has finished. \n Let’s move on to the task 2. \n\n The task is to rank images in order of your preference.'
            introduction_text2.pos = (0, 2 * an2pix)
            back_text2.text = 'Next: "Space" Key'
            back_text2.pos = (0, -2 * an2pix)
            fixation_point.opacity = 0.0
            stimuli.opacity = 0.0
        if intro_state == 1:
            introduction_text2.text = 'Click the center circle to display a lineup of images.'
            introduction_text2.pos = (0, 4 * an2pix)
            back_text2.text = 'Next: "Space" Key \n Back: "b" Key'
            back_text2.pos = (0, -4 * an2pix)
            fixation_point.opacity = 1.0
            stimuli.opacity = 0.0
        if intro_state == 2:
            introduction_text2.text = 'After you look at the images for 3 seconds, \n the mouse cursor will shown up. \n Please choose the most favorite image.'
            # introduction_text2.pos = (9 * an2pix, 0)
            introduction_text2.pos = (0, 0)
            back_text2.pos = (-9 * an2pix, -5 * an2pix)
            fixation_point.opacity = 0.0
            stimuli.opacity = 1.0
            square_list[0].opacity = 0.0
        if intro_state == 3:
            introduction_text2.text = 'For example, \n if you choose the most right image, \n it will disappear. \n\n Then, you select the most favorite image \n from the rest. \n\n When you finish choosing all images, \n the next 12 images will shown up.'
            square_list[0].opacity = 1.0
        if intro_state == 4:
            fixation_point.opacity = 1.0
            continueRoutine = False

        stimuli.draw()
        fixation_point.draw()
      Each JS Frame:
        ﻿keys = psychoJS.eventManager.getKeys({"keyList": ["space", "b"]});

        if (keys.slice(-1)[0] === "space") {
            intro_state += 1;
        }
        if (keys.slice(-1)[0] === "b") {
            intro_state -= 1;
        }
        if (intro_state < 0) {
            intro_state = 0;
        }

        if (intro_state === 0) {
            introduction_text2.text = 'The task 1 has finished. \n Let’s move on to the task 2. \n\n The task is to rank images in order of your preference.';
            introduction_text2.pos = [0, 2 * an2pix];
            back_text2.text = 'Next: "Space" Key';
            back_text2.pos = [0, -2 * an2pix];
            fixation_point.opacity = 0.0;
            stimuli.opacity = 0.0;
        }
        if (intro_state === 1) {
            introduction_text2.text = 'Click the center circle to display a lineup of images.';
            introduction_text2.pos = [0, 4 * an2pix];
            back_text2.text = 'Next: "Space" Key \n Back: "b" Key';
            back_text2.pos = [0, -4 * an2pix];
            fixation_point.opacity = 1.0;
            stimuli.opacity = 0.0;
        }
        if (intro_state === 2) {
            introduction_text2.text = 'After you look at the images for 3 seconds, \n the mouse cursor will shown up. \n Please choose the most favorite image.';
            introduction_text2.pos = [0, 0];
            back_text2.pos = [-9 * an2pix, -5 * an2pix];
            fixation_point.opacity = 0.0;
            stimuli.opacity = 1.0;
            square_list[0].opacity = 0.0;
        }
        if (intro_state === 3) {
            introduction_text2.text = 'For example, \n if you choose the most right image, \n it will disappear. \n\n Then, you select the most favorite image \n from the rest. \n\n When you finish choosing all images, \n the next 12 images will shown up.';
            square_list[0].opacity = 1.0;
        }
        if (intro_state === 4) {
            fixation_point.opacity = 1.0;
            continueRoutine = false;
        }
      End JS Routine:
        stimuli.setAutoDraw(false);
        fixation_point.setAutoDraw(false);
    CodeComponent set_mouse3
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        mouse.setVisible(True)
  Routine initializeTrial
    CodeComponent initialize_opacity
      Code Type = Auto->JS
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      Begin Routine:
        for i in range(len(square_list)):
            square_list[i].opacity = 0.0
    CodeComponent draw_fixation2
      Code Type = Both
      Begin JS Routine:
        fixation_point.setAutoDraw(true);
      Each Frame:
        fixation_point.draw()
      End JS Routine:
        fixation_point.setAutoDraw(false);
    MouseComponent mouse_3
      clickable = eval("fixation_point")
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent gitter_text2
      letterHeight = an2pix * 0.6
      pos = (0, -2 * an2pix)
      startVal [time (s)] = 0.0
      wrapWidth = 10000
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      text:
        After click the center circle,
        look for the favorite image from the presented images.
    CodeComponent create_clickable_list
      Code Type = Auto->JS
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      Begin Experiment:
        clickable_list = []
      Begin Routine:
        clickable_list = [
            square_0_0,
            square_0_1,
            square_0_2,
            square_0_3,
            square_1_0,
            square_1_1,
            square_1_2,
            square_1_3,
            square_2_0,
            square_2_1,
            square_2_2,
            square_2_3
        ]
    CodeComponent initialize_flag
      Code Type = Auto->JS
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      Begin Routine:
        initial_flag = True
  Routine updateSquares
    CodeComponent update_opacity
      Code Type = Auto->JS
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      Begin Routine:
        for i in range(len(square_list)):
            if square_list[i].name == ans_mouse2.clicked_name[0]:
                square_list[i].opacity = 1.0
    CodeComponent update_clickable_list
      Code Type = Both
      Begin JS Routine:
        for (var i = 0, _pj_a = clickable_list.length; (i < _pj_a); i += 1) {
            if ((clickable_list[i].name === ans_mouse2.clicked_name[0])) {
                clickable_list.splice(i, 1);
                break
            }
        }
      Begin Routine:
        for i in range(len(clickable_list)):
            if clickable_list[i].name == ans_mouse2.clicked_name[0]:
                _ = clickable_list.pop(i)
                break
    CodeComponent change_to_next_2
      Code Type = Auto->JS
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      Begin Routine:
        continueRoutine = False
  Routine practiceIntro
    TextComponent introduction_text_p
      letterHeight = an2pix * 0.7
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 10000
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      text:
        Let's practice with sample images.

        Hit “Space” key when ready.
    KeyboardComponent practice_info_key_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine actualIntro2
    TextComponent Introduction_text_a2
      letterHeight = an2pix * 0.7
      startVal [time (s)] = 0.0
      wrapWidth = 10000
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      text:
        Practice part has finished.

        Next part is the actual experiment.

        The task 2 has 160 trials in total.
        You’ll take a short break after 80 trials.

        Hit 's' Key when ready.
    KeyboardComponent actual_intro_key_resp2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent set_count2
      Code Type = Auto->JS
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      Begin Routine:
        count = 0
Flow
  Routine screenScale
  Routine expIntro
  Routine practiceIntro
  LoopInitiator PracticeTrials1 loopType="TrialHandler"
    conditionsFile = conditions/practiceTrials1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'presented_class': 0, 'magnified': 0},
      {'presented_class': 1, 'magnified': 0},
      {'presented_class': 2, 'magnified': 0},
      {'presented_class': 3, 'magnified': 0},
      {'presented_class': 4, 'magnified': 1},
      {'presented_class': 5, 'magnified': 1},
      {'presented_class': 6, 'magnified': 1},
      {'presented_class': 7, 'magnified': 1}]
    Routine gitter
    Routine showStim1
    Routine askQuestion1
  LoopTerminator PracticeTrials1
  Routine actualIntro1
  LoopInitiator ActualTrials1 loopType="TrialHandler"
    conditionsFile = conditions/actualTrials1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'presented_class': 0, 'magnified': 0, 'image_n': 0},
      {'presented_class': 1, 'magnified': 0, 'image_n': 0},
      {'presented_class': 2, 'magnified': 0, 'image_n': 0},
      {'presented_class': 3, 'magnified': 0, 'image_n': 0},
      {'presented_class': 4, 'magnified': 0, 'image_n': 0},
      {'presented_class': 5, 'magnified': 0, 'image_n': 0},
      {'presented_class': 6, 'magnified': 0, 'image_n': 0},
      {'presented_class': 7, 'magnified': 0, 'image_n': 0},
      {'presented_class': 0, 'magnified': 1, 'image_n': 0},
      {'presented_class': 1, 'magnified': 1, 'image_n': 0},
      {'presented_class': 2, 'magnified': 1, 'image_n': 0},
      {'presented_class': 3, 'magnified': 1, 'image_n': 0},
      {'presented_class': 4, 'magnified': 1, 'image_n': 0},
      {'presented_class': 5, 'magnified': 1, 'image_n': 0},
      {'presented_class': 6, 'magnified': 1, 'image_n': 0},
      {'presented_class': 7, 'magnified': 1, 'image_n': 0},
      {'presented_class': 0, 'magnified': 0, 'image_n': 1},
      {'presented_class': 1, 'magnified': 0, 'image_n': 1},
      {'presented_class': 2, 'magnified': 0, 'image_n': 1},
      {'presented_class': 3, 'magnified': 0, 'image_n': 1},
      {'presented_class': 4, 'magnified': 0, 'image_n': 1},
      {'presented_class': 5, 'magnified': 0, 'image_n': 1},
      {'presented_class': 6, 'magnified': 0, 'image_n': 1},
      {'presented_class': 7, 'magnified': 0, 'image_n': 1},
      {'presented_class': 0, 'magnified': 1, 'image_n': 1},
      {'presented_class': 1, 'magnified': 1, 'image_n': 1},
      {'presented_class': 2, 'magnified': 1, 'image_n': 1},
      {'presented_class': 3, 'magnified': 1, 'image_n': 1}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
    Routine gitter
    Routine showStim1
    Routine askQuestion1
    Routine takeBreak
  LoopTerminator ActualTrials1
  Routine expIntro2
  Routine practiceIntro
  LoopInitiator PracticeTrials2 loopType="TrialHandler"
    conditionsFile = conditions/practiceTrials2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'presented_class': 0},
      {'presented_class': 1},
      {'presented_class': 2},
      {'presented_class': 3}]
    Routine initializeTrial
    LoopInitiator rankImages_p loopType="TrialHandler"
      loopType = random
      nReps = 12
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      Routine showStim2
      Routine updateSquares
    LoopTerminator rankImages_p
  LoopTerminator PracticeTrials2
  Routine actualIntro2
  LoopInitiator ActualTrials2 loopType="TrialHandler"
    conditionsFile = conditions/actualTrials2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'presented_class': 0, 'image_n': 0},
      {'presented_class': 1, 'image_n': 0},
      {'presented_class': 2, 'image_n': 0},
      {'presented_class': 3, 'image_n': 0},
      {'presented_class': 4, 'image_n': 0},
      {'presented_class': 5, 'image_n': 0},
      {'presented_class': 6, 'image_n': 0},
      {'presented_class': 7, 'image_n': 0},
      {'presented_class': 0, 'image_n': 1},
      {'presented_class': 1, 'image_n': 1},
      {'presented_class': 2, 'image_n': 1},
      {'presented_class': 3, 'image_n': 1},
      {'presented_class': 4, 'image_n': 1},
      {'presented_class': 5, 'image_n': 1},
      {'presented_class': 6, 'image_n': 1},
      {'presented_class': 7, 'image_n': 1},
      {'presented_class': 0, 'image_n': 2},
      {'presented_class': 1, 'image_n': 2},
      {'presented_class': 2, 'image_n': 2},
      {'presented_class': 3, 'image_n': 2},
      {'presented_class': 4, 'image_n': 2},
      {'presented_class': 5, 'image_n': 2},
      {'presented_class': 6, 'image_n': 2},
      {'presented_class': 7, 'image_n': 2},
      {'presented_class': 0, 'image_n': 3},
      {'presented_class': 1, 'image_n': 3},
      {'presented_class': 2, 'image_n': 3},
      {'presented_class': 3, 'image_n': 3},
      {'presented_class': 4, 'image_n': 3},
      {'presented_class': 5, 'image_n': 3},
      {'presented_class': 6, 'image_n': 3},
      {'presented_class': 7, 'image_n': 3},
      {'presented_class': 0, 'image_n': 4},
      {'presented_class': 1, 'image_n': 4},
      {'presented_class': 2, 'image_n': 4},
      {'presented_class': 3, 'image_n': 4},
      {'presented_class': 4, 'image_n': 4},
      {'presented_class': 5, 'image_n': 4},
      {'presented_class': 6, 'image_n': 4},
      {'presented_class': 7, 'image_n': 4},
      {'presented_class': 0, 'image_n': 5}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
    Routine initializeTrial
    LoopInitiator rankImages_a loopType="TrialHandler"
      loopType = random
      nReps = 12
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      Routine showStim2
      Routine updateSquares
    LoopTerminator rankImages_a
    Routine takeBreak
  LoopTerminator ActualTrials2
  Routine publishSurveyCode
