PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['bank-1300155_640.png']
  Screen = 1
  Units = norm
  Window size (pixels) = [1440, 900]
  expName = peripheral_visual_search
  logging level = debug
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Routines
  Routine screen_scale
    CodeComponent code_JS
      Code Type = Both
      Begin JS Experiment:
        event=psychoJS.eventManager;
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
    CodeComponent code_scale
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Begin Routine:
        event.clearEvents()
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys and t > 1:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000

            # Added manually
            if win.units=='pix':
                vsize=win.size[1]

            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.07
      pos = (0, .6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card
        Up arrow for taller
        Down arrow for shorter
        Left arrow for narrower
        Right arrow for wider
    TextComponent text_bottom
      letterHeight = 0.07
      pos = (0, -.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar when done
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = bank-1300155_640.png
      saveStartStop = False
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine rectangle
    TextComponent text
      letterHeight = 0.07
      pos = (0, -.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        This shape should be a 10 cm square.
        Component size  (10*x_scale, 10*y_scale) set every repeat.
        Press space to continue
    PolygonComponent polygon
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent rectangle_key_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine exp_intro
    CodeComponent define_functions
      Code Type = Both
      Before JS Experiment:
        const range = (start, end) => [...Array((end - start) + 1)].map((_, i) => start + i);

        const shuffle = ([...array]) => {
            for (let i = array.length - 1; i >= 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [array[i], array[j]] = [array[j], array[i]];
            }
            return array;
        }

        const calcRad = (deg) => {
            return deg * (Math.PI / 180);
        }
    CodeComponent set_variables
      Code Type = Both
      Before Experiment:
        import random
      Begin Experiment:
        target_class = 'cat'
        non_target_classes = [
            'dog',
            'elephant',
            'tiger',
            'rabbit',
            'kangaroo',
            'sheep',
            'monkey',
            'lion',
            'bear',
            'fox',
            'pig',
            'otter',
        ]

        ans_keys_list = [['b', 'a', 'c', 'd'], ['f', 'e', 'g', 'h'], ['j', 'i', 'k', 'l']]
        key_to_pos = {}
        for i in range(len(ans_keys_list)):
            for j in range(len(ans_keys_list[i])):
                key_to_pos[ans_keys_list[i][j]] = [i, j]

        hw_rate = win.size[1] / win.size[0]

        idx = list(range(101, 149))
        idx = list(map(lambda x: str(x)[1:], idx))
        idx_list = {}
        for i in range(len(non_target_classes)):
            idx_list[non_target_classes[i]] = random.sample(idx, len(idx))
        idx_list[target_class] = random.sample(idx, len(idx))

        intro_state = -1
        reps = 0
      Begin JS Experiment:
        target_class = "cat";
        non_target_classes = ["dog", "elephant", "tiger", "rabbit", "kangaroo", "sheep", "monkey", "lion", "bear", "fox", "pig", "otter"];

        ans_keys_list = [["b", "a", "c", "d"], ["f", "e", "g", "h"], ["j", "i", "k", "l"]];
        key_to_pos = {};
        for (var i = 0, _pj_a = ans_keys_list.length; (i < _pj_a); i += 1) {
            for (var j = 0, _pj_b = ans_keys_list[i].length; (j < _pj_b); j += 1) {
                key_to_pos[ans_keys_list[i][j]] = [i, j];
            }
        }

        hw_rate = win.size[1] / win.size[0];

        idx = range(101, 148);
        idx = idx.map(x => x.toString().slice(1));
        idx_list = {};
        for (var i = 0, _pj_a = non_target_classes.length; (i < _pj_a); i += 1) {
            idx_list[non_target_classes[i]] = shuffle(idx)
        }
        idx_list[target_class] = shuffle(idx)

        intro_state = -1
        count = 0
        reps = 0
      Begin JS Routine:
        hw_rate = win.size[1] / win.size[0];
      Begin Routine:
        hw_rate = win.size[1] / win.size[0]
    CodeComponent calc_ecc
      Code Type = Both
      Before Experiment:
        import math
      Begin Experiment:
        eccentricity_level_0 = round(math.sqrt(2), 2)
        eccentricity_level_1 = round(1 + math.sqrt(8), 2)
        eccentricity_level_2 = round((math.sqrt(2) + 4 + math.sqrt((math.sqrt(2) + 4) ** 2 - 4 * (4 * math.sqrt(2) - 27))) / 2, 2)
        eccentricities = [
            eccentricity_level_0,
            eccentricity_level_1,
            eccentricity_level_2
        ]
      Begin JS Experiment:
        eccentricity_level_0 = Math.round(Math.sqrt(2) * 100) / 100;
        eccentricity_level_1 = Math.round((1 + Math.sqrt(8)) * 100) / 100;
        eccentricity_level_2 = Math.round(((Math.sqrt(2) + 4 + Math.sqrt(Math.pow((Math.sqrt(2) + 4), 2) - 4 * (4 * Math.sqrt(2) - 27))) / 2) * 100) / 100;
        eccentricities = [eccentricity_level_0, eccentricity_level_1, eccentricity_level_2];
    CodeComponent calc_deg2norm
      Code Type = Both
      Before Experiment:
        import math
      Begin Experiment:
        # Local
        # imac
        # VA = round(360 / pi * math.atan2(33.5, 2 * 57))
        # macbook
        VA = round(360 / pi * math.atan2(17.9, 2 * 57))
        deg2norm = 2 / VA
      Begin JS Experiment:
        VA = Math.round(360 / Math.PI * Math.atan2(17.9, (2 * 57)));
        deg2norm = 2 / VA
      Begin JS Routine:
        VA = Math.round(360 / Math.PI * Math.atan2(screen_height, (2 * 57)));
        deg2norm = 2 / VA
      Begin Routine:
        # Online
        VA = round(360 / pi * math.atan2(screen_height, 2 * 57))

        deg2norm = 2 / VA
    ImageComponent image_0_0
      image = html/resources/imagenet/bear/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (deg2norm * hw_rate, deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_0_1
      image = html/resources/imagenet/cat/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (deg2norm * hw_rate, deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_0_2
      image = html/resources/imagenet/dog/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (deg2norm * hw_rate, deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_0_3
      image = html/resources/imagenet/elephant/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (deg2norm * hw_rate, deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_1_0
      image = html/resources/imagenet/fox/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * deg2norm * hw_rate, 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_1_1
      image = html/resources/imagenet/kangaroo/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * deg2norm * hw_rate, 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_1_2
      image = html/resources/imagenet/lion/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * deg2norm * hw_rate, 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_1_3
      image = html/resources/imagenet/monkey/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * deg2norm * hw_rate, 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_2_0
      image = html/resources/imagenet/otter/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * 2 * deg2norm * hw_rate, 2 * 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_2_1
      image = html/resources/imagenet/pig/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * 2 * deg2norm * hw_rate, 2 * 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_2_2
      image = html/resources/imagenet/rabbit/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * 2 *deg2norm * hw_rate, 2 * 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_2_3
      image = html/resources/imagenet/sheep/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * 2 * deg2norm * hw_rate, 2 * 2 * deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent set_image_position
      Code Type = Both
      Begin JS Routine:
        image_list = [image_0_0, image_0_1, image_0_2, image_0_3, image_1_0, image_1_1, image_1_2, image_1_3, image_2_0, image_2_1, image_2_2, image_2_3];
        for (var i = 0, _pj_a = image_list.length; (i < _pj_a); i += 1) {
            if (i < 4) {
                image_list[i].pos = [
                    hw_rate * deg2norm * eccentricities[0] * Math.cos(calcRad((i % 4) * 90 + 45)),
                    deg2norm * eccentricities[0] * Math.sin(calcRad((i % 4) * 90 + 45))
                ];
            } else {
                if ((4 <= i) && (i < 8)) {
                    image_list[i].pos = [
                        hw_rate * deg2norm * eccentricities[1] * Math.cos(calcRad((i % 4) * 90)),
                        deg2norm * eccentricities[1] * Math.sin(calcRad((i % 4) * 90))
                    ];
                } else {
                    image_list[i].pos = [
                        hw_rate * deg2norm * eccentricities[2] * Math.cos(calcRad((i % 4) * 90 + 45)),
                        deg2norm * eccentricities[2] * Math.sin(calcRad((i % 4) * 90 + 45))
                    ];
                }
            }
        }
      Begin Routine:
        image_list = [
            image_0_0,
            image_0_1,
            image_0_2,
            image_0_3,
            image_1_0,
            image_1_1,
            image_1_2,
            image_1_3,
            image_2_0,
            image_2_1,
            image_2_2,
            image_2_3
        ]

        for i in range(len(image_list)):
            if i < 4:
                image_list[i].pos = (
                    hw_rate * deg2norm * eccentricities[0] * math.cos(math.radians(i % 4 * 90 + 45)),
                    deg2norm * eccentricities[0] * math.sin(math.radians(i % 4 * 90 + 45))
                )
            elif 4 <= i < 8:
                image_list[i].pos = (
                    hw_rate * deg2norm * eccentricities[1] * math.cos(math.radians(i % 4 * 90)),
                    deg2norm * eccentricities[1] * math.sin(math.radians(i % 4 * 90))
                )
            else:
                image_list[i].pos = (
                    hw_rate * deg2norm * eccentricities[2] * math.cos(math.radians(i % 4 * 90 + 45)),
                    deg2norm * eccentricities[2] * math.sin(math.radians(i % 4 * 90 + 45))
                )
    PolygonComponent fixation_point
      fillColor = $(0.5059, 0.5059, 0.5059)
      lineColor = $(0.5059, 0.5059, 0.5059)
      nVertices = 100
      opacity [set every repeat] = 0.0
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (deg2norm / 5 * hw_rate, deg2norm / 5)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent introduction_text
      letterHeight = deg2norm
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent back_text
      letterHeight = deg2norm * 0.5
      pos = (-0.6, -0.6)
      startVal [time (s)] = 0.0
      text [set every frame] = $intro_state
      units = norm
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    CodeComponent change_state
      Code Type = Both
      Each Frame:
        keys = [""]
        keys += event.getKeys(keyList=["space", "b"])

        if keys[-1] == "space":
            intro_state += 1
        if keys[-1] == "b":
            intro_state -= 1
        if intro_state < 0:
            intro_state = 0

        if intro_state == 0:
            introduction_text.text = 'Throughout this experiment, \n maintain a viewing distance of 57cm.'
        if intro_state == 1:
            introduction_text.text = 'The task of this experiment is \n "To find a cat from some images \n as soon as possible." \n\n The time limit is 5 sec.'
            introduction_text.height = deg2norm
            introduction_text.pos = (0, 0)
            fixation_point.opacity = 0.0
        if intro_state == 2:
            introduction_text.text = 'Gaze at the center of the display. \n\n Then, hit "Space" key to display a lineup of images.'
            introduction_text.height = deg2norm * 0.5
            introduction_text.pos = (0, 0.3)
            fixation_point.opacity = 1.0
            for i in range(len(image_list)):
                image_list[i].opacity = 0.0
        if intro_state == 3:
            introduction_text.text = 'When you find a cat, \n hit "Space" key as soon as possible \n and answer where the cat was.'
            introduction_text.pos = (0.6, 0)
            for i in range(len(image_list)):
                image_list[i].opacity = 1.0
        if intro_state == 4:
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["space", "b"]});
        if (keys.slice(-1)[0] === "space") {
            intro_state += 1;
        }
        if (keys.slice(-1)[0] === "b") {
            intro_state -= 1;
        }
        if (intro_state < 0) {
            intro_state = 0;
        }
        if (intro_state === 0) {
            introduction_text.text = "Throughout this experiment, \n maintain a viewing distance of 57cm.";
        }
        if (intro_state === 1) {
            introduction_text.text = "The task of this experiment is \n \"To find a cat from some images \n as soon as possible.\" \n\n The time limit is 5 sec.";
            introduction_text.height = deg2norm;
            introduction_text.pos = [0, 0];
            fixation_point.opacity = 0.0;
        }
        if (intro_state === 2) {
            introduction_text.text = "Gaze at the center of the display. \n\n Then, hit \"Space\" key to display a lineup of images.";
            introduction_text.height = (deg2norm * 0.5);
            introduction_text.pos = [0, 0.3];
            fixation_point.opacity = 1.0;
            for (var i = 0, _pj_a = image_list.length; (i < _pj_a); i += 1) {
                image_list[i].opacity = 0.0;
            }
        }
        if (intro_state === 3) {
            introduction_text.text = "When you find a cat, \n hit \"Space\" key as soon as possible \n and answer where the cat was.";
            introduction_text.pos = [0.6, 0];
            for (var i = 0, _pj_a = image_list.length; (i < _pj_a); i += 1) {
                image_list[i].opacity = 1.0;
            }
        }
        if (intro_state === 4) {
            continueRoutine = false;
        }
  Routine practice_intro
    TextComponent introduction_text_p
      letterHeight = deg2norm * 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Let's practice with some images.

        Hit a space key when ready.
    KeyboardComponent practice_info_key_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ask_question
    ImageComponent stimuli_arrangement
      image = html/resources/stimuli_arrangement.png
      saveStartStop = False
      size = (deg2norm, deg2norm)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent change_stim_size
      Code Type = Both
      Begin JS Routine:
        stimuli_arrangement.size = [
            hw_rate * (2 * eccentricities[2] / Math.sqrt(2) + 8) * deg2norm,
            (2 * eccentricities[2] / Math.sqrt(2) + 8) * deg2norm
        ];
      Begin Routine:
        stimuli_arrangement.size = (
            hw_rate * (2 * eccentricities[2] / math.sqrt(2) + 8) * deg2norm,
            (2 * eccentricities[2] / math.sqrt(2) + 8) * deg2norm,
        )
    TextComponent question_text
      letterHeight = deg2norm * 0.5
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Where Was the cat?
        Please press the Key
        corresponding to the position.
    TextComponent text_B
      letterHeight = deg2norm * 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = B
      units = norm
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    TextComponent text_A
      letterHeight = deg2norm * 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = A
      units = norm
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    TextComponent text_C
      letterHeight = deg2norm * 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = C
      units = norm
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    TextComponent text_D
      letterHeight = deg2norm * 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = D
      units = norm
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    TextComponent text_F
      letterHeight = deg2norm * 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = F
      units = norm
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    TextComponent text_E
      letterHeight = deg2norm * 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = E
      units = norm
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    TextComponent text_G
      letterHeight = deg2norm * 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = G
      units = norm
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    TextComponent text_H
      letterHeight = deg2norm * 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = H
      units = norm
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    TextComponent text_J
      letterHeight = deg2norm * 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = J
      units = norm
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    TextComponent text_I
      letterHeight = deg2norm * 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = I
      units = norm
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    TextComponent text_K
      letterHeight = deg2norm * 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = K
      units = norm
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    TextComponent text_L
      letterHeight = deg2norm * 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = L
      units = norm
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    CodeComponent place_alphabets
      Code Type = Both
      Begin JS Routine:
        alphabets_list = [text_B, text_A, text_C, text_D, text_F, text_E, text_G, text_H, text_J, text_I, text_K, text_L];
        for (var i = 0, _pj_a = alphabets_list.length; (i < _pj_a); i += 1) {
            if ((i < 4)) {
                alphabets_list[i].pos = [
                    hw_rate * deg2norm * eccentricities[0] * Math.cos(calcRad((i % 4) * 90 + 45)),
                    deg2norm * eccentricities[0] * Math.sin(calcRad((i % 4) * 90 + 45))
                ];
            } else {
                if (((4 <= i) && (i < 8))) {
                    alphabets_list[i].pos = [
                        hw_rate * deg2norm * eccentricities[1] * Math.cos(calcRad((i % 4) * 90)),
                        deg2norm * eccentricities[1] * Math.sin(calcRad((i % 4) * 90))
                    ];
                } else {
                    alphabets_list[i].pos = [
                        hw_rate * deg2norm * eccentricities[2] * Math.cos(calcRad((i % 4) * 90 + 45)),
                        deg2norm * eccentricities[2] * Math.sin(calcRad((i % 4) * 90 + 45))
                    ];
                }
            }
        }
      Begin Routine:
        alphabets_list = [
            text_B,
            text_A,
            text_C,
            text_D,
            text_F,
            text_E,
            text_G,
            text_H,
            text_J,
            text_I,
            text_K,
            text_L
        ]

        for i in range(len(alphabets_list)):
            if i < 4:
                alphabets_list[i].pos = (
                    hw_rate * deg2norm * eccentricities[0] * math.cos(math.radians(i % 4 * 90 + 45)),
                    deg2norm * eccentricities[0] * math.sin(math.radians(i % 4 * 90 + 45))
                )
            elif 4 <= i < 8:
                alphabets_list[i].pos = (
                    hw_rate * deg2norm * eccentricities[1] * math.cos(math.radians(i % 4 * 90)),
                    deg2norm * eccentricities[1] * math.sin(math.radians(i % 4 * 90))
                )
            else:
                alphabets_list[i].pos = (
                    hw_rate * deg2norm * eccentricities[2] * math.cos(math.radians(i % 4 * 90 + 45)),
                    deg2norm * eccentricities[2] * math.sin(math.radians(i % 4 * 90 + 45))
                )
    KeyboardComponent key_ans
      allowedKeys = 'a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine show_feedback
    TextComponent feedback_text
      letterHeight = deg2norm * 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = feedback text
      units = norm
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    CodeComponent change_feedback
      Code Type = Both
      Begin JS Routine:
        if ((key_to_pos[key_ans.keys][0] === pos) && (key_to_pos[key_ans.keys][1] === ori)) {
            feedback_text.text = "Your answer is correct!";
            thisExp.addData("TF", "True");
        } else {
            feedback_text.text = "Your answer is incorrect.";
            thisExp.addData("TF", "False");
        }
      Begin Routine:
        if key_to_pos[key_ans.keys][0] == pos and key_to_pos[key_ans.keys][1] == ori:
            feedback_text.text = 'Your answer is correct!'
            thisExp.addData('TF', 'True')
        else:
            feedback_text.text = 'Your answer is incorrect.'
            thisExp.addData('TF', 'False')
      Each Frame:
        if show_feedbackClock.getTime() > 1:
            continueRoutine=False
      Each JS Frame:
        if (show_feedbackClock.getTime() > 1) {
            continueRoutine = false;
        }
    KeyboardComponent show_fb_key_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine actual_intro
    TextComponent introduction_text_a
      letterHeight = deg2norm * 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Practice part has finished.

        Next part is the experiment.
        Hit 's' Key when ready.
    KeyboardComponent actual_intro_key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine gitter
    CodeComponent draw_fixation
      Code Type = Both
      Begin JS Routine:
        fixation_point.fillColor = [(- 0.498), (- 0.498), (- 0.498)];
        fixation_point.lineColor = [(- 0.498), (- 0.498), (- 0.498)];
        fixation_point.setAutoDraw(true);
      Begin Routine:
        fixation_point.fillColor = (-0.4980, -0.4980, -0.4980)
        fixation_point.lineColor = (-0.4980, -0.4980, -0.4980)
      Each Frame:
        fixation_point.draw()
      End JS Routine:
        fixation_point.setAutoDraw(false);
    KeyboardComponent exp_start
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent change_fixation_color
      Code Type = Both
      End JS Routine:
        fixation_point.fillColor = [0.5059, 0.5059, 0.5059];
        fixation_point.lineColor = [0.5059, 0.5059, 0.5059];
      End Routine:
        fixation_point.fillColor = (0.5059, 0.5059, 0.5059)
        fixation_point.lineColor = (0.5059, 0.5059, 0.5059)
  Routine take_break
    TextComponent break_text
      letterHeight = deg2norm * 0.5
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please take a short break.

        If the experiment is ready,
        the window will change to the fixation point.
    CodeComponent show_break_text
      Code Type = Both
      Begin JS Routine:
        if ((count != 47) || (reps == 3)) {
            count += 1;
            continueRoutine = false;
        } else {
            count = 0
            reps += 1
            for (var i = 0, _pj_a = non_target_classes.length; (i < _pj_a); i += 1) {
                idx_list[non_target_classes[i]] = shuffle(idx)
            }
            idx_list[target_class] = shuffle(idx)
        }
      Begin Routine:
        if ActualTrials.thisTrialN != 47 or reps == 3:
            continueRoutine=False
        else:
            reps += 1
            for i in range(len(non_target_classes)):
                idx_list[non_target_classes[i]] = random.sample(idx, len(idx))
            idx_list[target_class] = random.sample(idx, len(idx))
      Each Frame:
        if take_breakClock.getTime() > 30:
            continueRoutine = False
      Each JS Frame:
        if ((take_breakClock.getTime() > 30)) {
            continueRoutine = false;
        }
  Routine show_stim
    CodeComponent change_nontarget
      Code Type = Both
      Before Experiment:
        from PIL import Image
      Begin JS Routine:
        _non_target_classes = shuffle(non_target_classes);
        for (var i = 0, _pj_a = image_list.length; (i < _pj_a); i += 1) {
            if (currentLoop.name == "PracticeTrials") {
                image_path = "imagenet/" + _non_target_classes[i] + "/image" + (Math.floor(Math.random() * (149 - 101)) + 101).toString().slice(1) + ".png";
            } else {
                image_path = "imagenet/" + _non_target_classes[i] + "/image" + idx_list[_non_target_classes[i]][count] + ".png";
            }
            image_list[i].setImage(image_path);

            thisExp.addData(_non_target_classes[i], image_path);
        }
      Begin Routine:
        _non_target_classes = random.sample(non_target_classes, len(non_target_classes))
        for i in range(len(image_list)):
            if currentLoop.name == 'PracticeTrials':
                image_path = 'html/resources/imagenet/' + _non_target_classes[i] + '/image' + str(random.randrange(101, 149))[1:] + '.png'
            else:
                image_path = 'html/resources/imagenet/' + _non_target_classes[i] + '/image' + idx_list[_non_target_classes[i]][ActualTrials.thisTrialN] + '.png'
            image_list[i].image = Image.open(image_path)

            thisExp.addData(_non_target_classes[i], image_path)
    CodeComponent change_target
      Code Type = Both
      Begin JS Routine:
        if (currentLoop.name == "PracticeTrials") {
            image_path = "imagenet/" + target_class + "/image" + (Math.floor(Math.random() * (149 - 101)) + 101).toString().slice(1) + ".png";
        } else {
            image_path = "imagenet/" + target_class + "/image" + idx_list[target_class][count] + ".png";
        }
        image_list[4 * pos + ori].setImage(image_path);

        thisExp.addData(target_class, image_path);
      Begin Routine:
        if currentLoop.name == 'PracticeTrials':
            image_path = 'html/resources/imagenet/' + target_class + '/image' + str(random.randrange(101, 149))[1:] + '.png'
        else:
            image_path = 'html/resources/imagenet/' + target_class + '/image' + idx_list[target_class][ActualTrials.thisTrialN] + '.png'
        image_list[4 * pos + ori].image = Image.open(image_path)

        thisExp.addData(target_class, image_path)
    CodeComponent change_size_rate
      Code Type = Both
      Begin JS Routine:
        for (var i = 0, _pj_a = image_list.length; (i < _pj_a); i += 1) {
            image_list[i].size = [size * deg2norm, size * deg2norm];
            if ((4 <= i) && (i < 8)) {
                image_list[i].size = [rate * image_list[i].size[0], rate * image_list[i].size[1]];
            } else {
                if (i >= 8) {
                    image_list[i].size = [Math.pow(rate, 2) * image_list[i].size[0], Math.pow(rate, 2) * image_list[i].size[1]];
                }
            }
            image_list[i].size[0] *= hw_rate;
        }
      Begin Routine:
        for i in range(len(image_list)):
            image_list[i].size = (size * deg2norm, size * deg2norm)
            if 4 <= i < 8:
                image_list[i].size = (rate * image_list[i].size[0], rate * image_list[i].size[1])
            elif i >= 8:
                image_list[i].size = ((rate ** 2) * image_list[i].size[0], (rate ** 2) * image_list[i].size[1])
            image_list[i].size[0] *= hw_rate
    CodeComponent draw_and_flip
      Code Type = Both
      Begin JS Routine:
        fixation_point.setAutoDraw(true);
      Each Frame:
        fixation_point.draw()

        if show_stimClock.getTime() > 1:
            for i in range(len(image_list)):
                image_list[i].draw()
      Each JS Frame:
        if (show_stimClock.getTime() > 1) {
            for (var i = 0, _pj_a = image_list.length; (i < _pj_a); i += 1) {
                image_list[i].setAutoDraw(true);
            }
        }
      End JS Routine:
        fixation_point.setAutoDraw(false);

        for (var i = 0, _pj_a = image_list.length; (i < _pj_a); i += 1) {
            image_list[i].setAutoDraw(false);
        }
    KeyboardComponent show_stim_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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    CodeComponent store_rt
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('reactionTime', show_stimClock.getTime() - 1)
    CodeComponent force_change
      Code Type = Auto->JS
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      Each Frame:
        if show_stimClock.getTime() > 6:
            continueRoutine = False
  Routine notice
    TextComponent notice_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Throughout this experiment,
        maintain a viewing distance of 57cm.
    KeyboardComponent notice_key_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine screen_scale
  Routine rectangle
  Routine exp_intro
  Routine practice_intro
  LoopInitiator PracticeTrials loopType="TrialHandler"
    conditionsFile = conditions/practiceConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'size': 1, 'rate': 1, 'pos': 0, 'ori': 0},
      {'size': 1, 'rate': 1, 'pos': 1, 'ori': 1},
      {'size': 1, 'rate': 1, 'pos': 2, 'ori': 2},
      {'size': 1, 'rate': 2, 'pos': 0, 'ori': 3},
      {'size': 1, 'rate': 2, 'pos': 1, 'ori': 0},
      {'size': 1, 'rate': 2, 'pos': 2, 'ori': 1},
      {'size': 2, 'rate': 1, 'pos': 0, 'ori': 2},
      {'size': 2, 'rate': 1, 'pos': 1, 'ori': 3},
      {'size': 2, 'rate': 1, 'pos': 2, 'ori': 0},
      {'size': 2, 'rate': 2, 'pos': 0, 'ori': 1},
      {'size': 2, 'rate': 2, 'pos': 1, 'ori': 2},
      {'size': 2, 'rate': 2, 'pos': 2, 'ori': 3}]
    Routine gitter
    Routine show_stim
    Routine ask_question
    Routine show_feedback
  LoopTerminator PracticeTrials
  Routine actual_intro
  LoopInitiator ActualTrials loopType="TrialHandler"
    conditionsFile = conditions/expConditions.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'size': 1, 'rate': 1, 'pos': 0, 'ori': 0},
      {'size': 1, 'rate': 1, 'pos': 0, 'ori': 1},
      {'size': 1, 'rate': 1, 'pos': 1, 'ori': 2},
      {'size': 1, 'rate': 1, 'pos': 1, 'ori': 3},
      {'size': 1, 'rate': 1, 'pos': 2, 'ori': 0},
      {'size': 1, 'rate': 1, 'pos': 2, 'ori': 1},
      {'size': 1, 'rate': 1, 'pos': 0, 'ori': 2},
      {'size': 1, 'rate': 1, 'pos': 0, 'ori': 3},
      {'size': 1, 'rate': 1, 'pos': 1, 'ori': 0},
      {'size': 1, 'rate': 1, 'pos': 1, 'ori': 1},
      {'size': 1, 'rate': 1, 'pos': 2, 'ori': 2},
      {'size': 1, 'rate': 1, 'pos': 2, 'ori': 3},
      {'size': 1, 'rate': 2, 'pos': 0, 'ori': 0},
      {'size': 1, 'rate': 2, 'pos': 0, 'ori': 1},
      {'size': 1, 'rate': 2, 'pos': 1, 'ori': 2},
      {'size': 1, 'rate': 2, 'pos': 1, 'ori': 3},
      {'size': 1, 'rate': 2, 'pos': 2, 'ori': 0},
      {'size': 1, 'rate': 2, 'pos': 2, 'ori': 1},
      {'size': 1, 'rate': 2, 'pos': 0, 'ori': 2},
      {'size': 1, 'rate': 2, 'pos': 0, 'ori': 3},
      {'size': 1, 'rate': 2, 'pos': 1, 'ori': 0},
      {'size': 1, 'rate': 2, 'pos': 1, 'ori': 1},
      {'size': 1, 'rate': 2, 'pos': 2, 'ori': 2},
      {'size': 1, 'rate': 2, 'pos': 2, 'ori': 3},
      {'size': 2, 'rate': 1, 'pos': 0, 'ori': 0},
      {'size': 2, 'rate': 1, 'pos': 0, 'ori': 1},
      {'size': 2, 'rate': 1, 'pos': 1, 'ori': 2},
      {'size': 2, 'rate': 1, 'pos': 1, 'ori': 3},
      {'size': 2, 'rate': 1, 'pos': 2, 'ori': 0},
      {'size': 2, 'rate': 1, 'pos': 2, 'ori': 1},
      {'size': 2, 'rate': 1, 'pos': 0, 'ori': 2},
      {'size': 2, 'rate': 1, 'pos': 0, 'ori': 3},
      {'size': 2, 'rate': 1, 'pos': 1, 'ori': 0},
      {'size': 2, 'rate': 1, 'pos': 1, 'ori': 1},
      {'size': 2, 'rate': 1, 'pos': 2, 'ori': 2}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
    Routine gitter
    Routine show_stim
    Routine ask_question
    Routine show_feedback
    Routine take_break
  LoopTerminator ActualTrials
