PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['WORKER ID'], expName, expInfo['date'])
  Experiment info = {'WORKER ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['bank-1300155_640.png']
  Screen = 1
  Units = pix
  Window size (pixels) = [3200, 1800]
  expName = peripheral_visual_search
  logging level = debug
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Routines
  Routine rectangle
    TextComponent text
      letterHeight = 0.07
      pos = (0, -.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        This shape should be a 10 cm square.
        Component size  (10*x_scale, 10*y_scale) set every repeat.
        Press space to continue
    PolygonComponent polygon
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent rectangle_key_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine actual_intro
    TextComponent introduction_text_a
      letterHeight = an2pix * 0.7
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 10000
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      text:
        Practice part has finished.

        Next part is the experiment.

        In total the experiment has 324 trials.
        You’ll take a short break after every 81 trials.

        Hit 's' Key when ready.
    KeyboardComponent actual_intro_key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine gitter
    CodeComponent draw_fixation
      Code Type = Both
      Begin JS Routine:
        fixation_point.fillColor = [(- 0.498), (- 0.498), (- 0.498)];
        fixation_point.lineColor = [(- 0.498), (- 0.498), (- 0.498)];
        fixation_point.setAutoDraw(true);
      Begin Routine:
        fixation_point.fillColor = (-0.4980, -0.4980, -0.4980)
        fixation_point.lineColor = (-0.4980, -0.4980, -0.4980)
      Each Frame:
        fixation_point.draw()
      End JS Routine:
        fixation_point.setAutoDraw(false);
    CodeComponent change_fixation_color
      Code Type = Both
      End JS Routine:
        fixation_point.fillColor = [0.5059, 0.5059, 0.5059];
        fixation_point.lineColor = [0.5059, 0.5059, 0.5059];
      End Routine:
        fixation_point.fillColor = (0.5059, 0.5059, 0.5059)
        fixation_point.lineColor = (0.5059, 0.5059, 0.5059)
    MouseComponent mouse
      clickable = eval("fixation_point")
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent gitter_text
      contrast = 10000
      letterHeight = an2pix * 0.7
      pos = (0, -an2pix * 1.5)
      startVal [time (s)] = 0.0
      text = Click the center circle to start.
      wrapWidth = 10000
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    CodeComponent set_mouse
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        mouse.setVisible(True)
      End JS Routine:
        document.body.style.cursor='none';
      End Routine:
        mouse.setVisible(False)
  Routine screenScale
    CodeComponent code_JS
      Code Type = Both
      Begin JS Experiment:
        event=psychoJS.eventManager;
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
    CodeComponent code_scale
      Code Type = Both
      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=50
            y_scale=50
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1

        an2pix = 50
      Begin JS Experiment:
        oldt = 0;
        x_size = 8.56;
        y_size = 5.398;
        screen_height = 0;
        if ((win.units === "norm")) {
            x_scale = 0.05;
            y_scale = 0.1;
            dbase = 0.0001;
            unittext = " norm units";
            vsize = 2;
        } else {
            if ((win.units === "pix")) {
                x_scale = 50;
                y_scale = 50;
                dbase = 0.1;
                unittext = " pixels";
                vsize = win.size[1];
            } else {
                x_scale = 0.05;
                y_scale = 0.05;
                dbase = 0.0001;
                unittext = " height units";
                vsize = 1;
            }
        }
        an2pix = 50;
      Begin JS Routine:
        event.clearEvents();
        resz = (an2pix / ((x_scale + y_scale) / 2));
        distance = Number.parseInt((resz / (2 * Math.tan((Math.PI / 360)))));
        text_bottom.text = (("Throughout this experiment, \n please maintain a viewing distance at " + distance.toString()) + "cm.");
      Begin Routine:
        event.clearEvents()

        resz = an2pix / ((x_scale + y_scale) / 2)
        distance = int(resz / (2 * math.tan(math.pi / 360)))
        text_bottom.text= 'Throughout this experiment, \n please maintain a viewing distance at ' + str(distance) + 'cm.'
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys and t > 1:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000

            # Added manually
            if win.units=='pix':
                vsize=win.size[1] / 2

            screen_height=round(vsize*10/y_scale)/10
            resz = an2pix / ((x_scale + y_scale) / 2)
            distance = int(resz / (2 * math.tan(math.pi / 360)))

            text_bottom.text= 'Throughout this experiment, \n please maintain a viewing distance at ' + str(distance) + 'cm.'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (((t - oldt) < 0.5)) {
                dscale = (5 * dbase);
                oldt = t;
            } else {
                dscale = dbase;
                oldt = t;
            }
            if ((_pj.in_es6("space", keys) && (t > 1))) {
                continueRoutine = false;
            } else {
                if (_pj.in_es6("up", keys)) {
                    y_scale = (round(((y_scale + dscale) * 10000)) / 10000);
                } else {
                    if (_pj.in_es6("down", keys)) {
                        y_scale = (round(((y_scale - dscale) * 10000)) / 10000);
                    } else {
                        if (_pj.in_es6("left", keys)) {
                            x_scale = (round(((x_scale - dscale) * 10000)) / 10000);
                        } else {
                            if (_pj.in_es6("right", keys)) {
                                x_scale = (round(((x_scale + dscale) * 10000)) / 10000);
                            }
                        }
                    }
                }
            }
            if ((win.units === "pix")) {
                vsize = (win.size[1] / 2);
            }
            screen_height = (round(((vsize * 10) / y_scale)) / 10);
            resz = (an2pix / ((x_scale + y_scale) / 2));
            distance = Number.parseInt((resz / (2 * Math.tan((Math.PI / 360)))));
            text_bottom.text = (("Throughout this experiment, \n please maintain a viewing distance at " + distance.toString()) + "cm.");
            ccimage.size = [(x_size * x_scale), (y_size * y_scale)];
        }
      End JS Routine:
        thisExp.addData("X Scale", x_scale);
        thisExp.addData("Y Scale", y_scale);
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.07
      pos = (0, .6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card
        Up arrow for taller
        Down arrow for shorter
        Left arrow for narrower
        Right arrow for wider
    TextComponent text_middle
      letterHeight = 0.07
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Press "Space" key when done.
      units = norm
      wrapWidth = 1.5
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    TextComponent text_bottom
      color = springgreen
      letterHeight = 0.07
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = html/resources/bank-1300155_640.png
      saveStartStop = False
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine expIntro
    CodeComponent define_functions
      Code Type = Both
      Before Experiment:
        def calc_idx_list(non_target_classes, target_class, num):
            idx = list(range(101, 101 + num))
            idx = list(map(lambda x: str(x)[1:], idx))
            idx_list = {}
            for i in range(len(non_target_classes)):
                idx_list[non_target_classes[i]] = random.sample(idx, len(idx))
            idx_list[target_class] = random.sample(idx, len(idx))
            return idx_list
      Before JS Experiment:
        const range = (start, end) => [...Array((end - start) + 1)].map((_, i) => start + i);

        const shuffle = ([...array]) => {
            for (let i = array.length - 1; i >= 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [array[i], array[j]] = [array[j], array[i]];
            }
            return array;
        }

        const calcRad = (deg) => {
            return deg * (Math.PI / 180);
        }
    CodeComponent set_variables
      Code Type = Both
      Before Experiment:
        import random
      Begin Experiment:
        target_class = 'cat'
        non_target_classes = [
            'dog',
            'elephant',
            'tiger',
            'rabbit',
            'kangaroo',
            'sheep',
            'monkey',
            'lion',
            'bear',
            'fox',
            'pig',
            'otter',
        ]

        ans_keys_list = [['b', 'a', 'c', 'd'], ['g', 'e', 'f', 'h'], ['j', 'i', 'k', 'l']]
        key_to_pos = {}
        for i in range(len(ans_keys_list)):
            for j in range(len(ans_keys_list[i])):
                key_to_pos[ans_keys_list[i][j]] = [i, j]

        ans_text_list = ['2', '1', '3', '4', '7', '5', '6', '8', '10', '9', '11', '12']

        idx = list(range(101, 149))
        idx = list(map(lambda x: str(x)[1:], idx))
        idx_list = {}
        for i in range(len(non_target_classes)):
            idx_list[non_target_classes[i]] = random.sample(idx, len(idx))
        idx_list[target_class] = random.sample(idx, len(idx))

        intro_state = -1
        reps = 0
      Begin JS Experiment:
        target_class = "cat";
        non_target_classes = ["dog", "elephant", "tiger", "rabbit", "kangaroo", "sheep", "monkey", "lion", "bear", "fox", "pig", "otter"];

        ans_keys_list = [["b", "a", "c", "d"], ["g", "e", "f", "h"], ["j", "i", "k", "l"]];
        key_to_pos = {};
        for (var i = 0, _pj_a = ans_keys_list.length; (i < _pj_a); i += 1) {
            for (var j = 0, _pj_b = ans_keys_list[i].length; (j < _pj_b); j += 1) {
                key_to_pos[ans_keys_list[i][j]] = [i, j];
            }
        }

        ans_text_list = ["2", "1", "3", "4", "7", "5", "6", "8", "10", "9", "11", "12"];

        idx = range(101, 148);
        idx = idx.map(x => x.toString().slice(1));
        idx_list = {};
        for (var i = 0, _pj_a = non_target_classes.length; (i < _pj_a); i += 1) {
            idx_list[non_target_classes[i]] = shuffle(idx)
        }
        idx_list[target_class] = shuffle(idx)

        intro_state = -1;
        count = 0;
    CodeComponent calc_ecc
      Code Type = Both
      Before Experiment:
        import math
      Begin Experiment:
        eccentricity_level_0 = round(math.sqrt(2), 2)
        eccentricity_level_1 = round(1 + math.sqrt(8), 2)
        eccentricity_level_2 = round((math.sqrt(2) + 4 + math.sqrt((math.sqrt(2) + 4) ** 2 - 4 * (4 * math.sqrt(2) - 27))) / 2, 2)
        eccentricities = [
            eccentricity_level_0,
            eccentricity_level_1,
            eccentricity_level_2
        ]
      Begin JS Experiment:
        eccentricity_level_0 = Math.round(Math.sqrt(2) * 100) / 100;
        eccentricity_level_1 = Math.round((1 + Math.sqrt(8)) * 100) / 100;
        eccentricity_level_2 = Math.round(((Math.sqrt(2) + 4 + Math.sqrt(Math.pow((Math.sqrt(2) + 4), 2) - 4 * (4 * Math.sqrt(2) - 27))) / 2) * 100) / 100;
        eccentricities = [eccentricity_level_0, eccentricity_level_1, eccentricity_level_2];
    ImageComponent image_0_0
      image = html/resources/imagenet/bear/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (an2pix, an2pix)
      startVal [time (s)] = 0.0
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    ImageComponent image_0_1
      image = html/resources/imagenet/cat/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (an2pix, an2pix)
      startVal [time (s)] = 0.0
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    ImageComponent image_0_2
      image = html/resources/imagenet/dog/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (an2pix, an2pix)
      startVal [time (s)] = 0.0
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    ImageComponent image_0_3
      image = html/resources/imagenet/elephant/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (an2pix, an2pix)
      startVal [time (s)] = 0.0
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    ImageComponent image_1_0
      image = html/resources/imagenet/fox/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * an2pix, 2 * an2pix)
      startVal [time (s)] = 0.0
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    ImageComponent image_1_1
      image = html/resources/imagenet/kangaroo/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * an2pix, 2 * an2pix)
      startVal [time (s)] = 0.0
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    ImageComponent image_1_2
      image = html/resources/imagenet/lion/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * an2pix, 2 * an2pix)
      startVal [time (s)] = 0.0
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    ImageComponent image_1_3
      image = html/resources/imagenet/monkey/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * an2pix, 2 * an2pix)
      startVal [time (s)] = 0.0
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    ImageComponent image_2_0
      image = html/resources/imagenet/otter/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * 2 * an2pix, 2 * 2 * an2pix)
      startVal [time (s)] = 0.0
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    ImageComponent image_2_1
      image = html/resources/imagenet/pig/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * 2 * an2pix, 2 * 2 * an2pix)
      startVal [time (s)] = 0.0
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    ImageComponent image_2_2
      image = html/resources/imagenet/rabbit/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * 2 * an2pix, 2 * 2 * an2pix)
      startVal [time (s)] = 0.0
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    ImageComponent image_2_3
      image = html/resources/imagenet/sheep/image01.png
      opacity = 0.0
      saveStartStop = False
      size [set every repeat] = (2 * 2 * an2pix, 2 * 2 * an2pix)
      startVal [time (s)] = 0.0
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    CodeComponent set_image_position
      Code Type = Both
      Begin JS Routine:
        image_list = [image_0_0, image_0_1, image_0_2, image_0_3, image_1_0, image_1_1, image_1_2, image_1_3, image_2_0, image_2_1, image_2_2, image_2_3];
        for (var i = 0, _pj_a = image_list.length; (i < _pj_a); i += 1) {
            if (i < 4) {
                image_list[i].pos = [
                    an2pix * eccentricities[0] * Math.cos(calcRad((i % 4) * 90 + 45)),
                    an2pix * eccentricities[0] * Math.sin(calcRad((i % 4) * 90 + 45))
                ];
            } else {
                if ((4 <= i) && (i < 8)) {
                    image_list[i].pos = [
                        an2pix * eccentricities[1] * Math.cos(calcRad((i % 4) * 90)),
                        an2pix * eccentricities[1] * Math.sin(calcRad((i % 4) * 90))
                    ];
                } else {
                    image_list[i].pos = [
                        an2pix * eccentricities[2] * Math.cos(calcRad((i % 4) * 90 + 45)),
                        an2pix * eccentricities[2] * Math.sin(calcRad((i % 4) * 90 + 45))
                    ];
                }
            }
        }
      Begin Routine:
        image_list = [
            image_0_0,
            image_0_1,
            image_0_2,
            image_0_3,
            image_1_0,
            image_1_1,
            image_1_2,
            image_1_3,
            image_2_0,
            image_2_1,
            image_2_2,
            image_2_3
        ]

        for i in range(len(image_list)):
            if i < 4:
                image_list[i].pos = (
                    an2pix * eccentricities[0] * math.cos(math.radians(i % 4 * 90 + 45)),
                    an2pix * eccentricities[0] * math.sin(math.radians(i % 4 * 90 + 45))
                )
            elif 4 <= i < 8:
                image_list[i].pos = (
                    an2pix * eccentricities[1] * math.cos(math.radians(i % 4 * 90)),
                    an2pix * eccentricities[1] * math.sin(math.radians(i % 4 * 90))
                )
            else:
                image_list[i].pos = (
                    an2pix * eccentricities[2] * math.cos(math.radians(i % 4 * 90 + 45)),
                    an2pix * eccentricities[2] * math.sin(math.radians(i % 4 * 90 + 45))
                )
    ImageComponent stimuli_arrangement
      image = html/resources/stimuli_arrangement.png
      opacity = 0.0
      saveStartStop = False
      size = (an2pix, an2pix)
      startVal [time (s)] = 0.0
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    CodeComponent change_stim_size
      Code Type = Both
      Begin JS Routine:
        stimuli_arrangement.size = [
            an2pix * (2 * eccentricities[2] / Math.sqrt(2) + 8),
            an2pix * (2 * eccentricities[2] / Math.sqrt(2) + 8)
        ];
      Begin Routine:
        stimuli_arrangement.size = (
            an2pix * (2 * eccentricities[2] / math.sqrt(2) + 8),
            an2pix * (2 * eccentricities[2] / math.sqrt(2) + 8),
        )
    TextComponent ans_0_0
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_0_1
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_0_2
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_0_3
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_1_0
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_1_1
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_1_2
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_1_3
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_2_0
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_2_1
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_2_2
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent ans_2_3
      letterHeight = 1.5 * an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent set_ans_text_position
      Code Type = Both
      Begin JS Routine:
        ans_list = [ans_0_0, ans_0_1, ans_0_2, ans_0_3, ans_1_0, ans_1_1, ans_1_2, ans_1_3, ans_2_0, ans_2_1, ans_2_2, ans_2_3];

        for (var i = 0, _pj_a = ans_list.length; (i < _pj_a); i += 1) {
            if (i < 4) {
                ans_list[i].pos = [
                    an2pix * eccentricities[0] * Math.cos(calcRad((i % 4) * 90 + 45)),
                    an2pix * eccentricities[0] * Math.sin(calcRad((i % 4) * 90 + 45))
                ];
            } else {
                if ((4 <= i) && (i < 8)) {
                    ans_list[i].pos = [
                        an2pix * eccentricities[1] * Math.cos(calcRad((i % 4) * 90)),
                        an2pix * eccentricities[1] * Math.sin(calcRad((i % 4) * 90))
                    ];
                } else {
                    ans_list[i].pos = [
                        an2pix * eccentricities[2] * Math.cos(calcRad((i % 4) * 90 + 45)),
                        an2pix * eccentricities[2] * Math.sin(calcRad((i % 4) * 90 + 45))
                    ];
                }
            }
        }
      Begin Routine:
        ans_list = [
            ans_0_0,
            ans_0_1,
            ans_0_2,
            ans_0_3,
            ans_1_0,
            ans_1_1,
            ans_1_2,
            ans_1_3,
            ans_2_0,
            ans_2_1,
            ans_2_2,
            ans_2_3
        ]

        for i in range(len(ans_list)):
            if i < 4:
                ans_list[i].pos = (
                    an2pix * eccentricities[0] * math.cos(math.radians(i % 4 * 90 + 45)),
                    an2pix * eccentricities[0] * math.sin(math.radians(i % 4 * 90 + 45))
                )
            elif 4 <= i < 8:
                ans_list[i].pos = (
                    an2pix * eccentricities[1] * math.cos(math.radians(i % 4 * 90)),
                    an2pix * eccentricities[1] * math.sin(math.radians(i % 4 * 90))
                )
            else:
                ans_list[i].pos = (
                    an2pix * eccentricities[2] * math.cos(math.radians(i % 4 * 90 + 45)),
                    an2pix * eccentricities[2] * math.sin(math.radians(i % 4 * 90 + 45))
                )
    CodeComponent ans_to_pos
      Code Type = Auto->JS
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      Begin Routine:
        ans_to_pos = {}
        for i in range(len(ans_list)):
            ans_to_pos[ans_list[i].name] = [int(i / 4) % 3, i % 4]
    PolygonComponent fixation_point
      fillColor = $(0.5059, 0.5059, 0.5059)
      lineColor = $(0.5059, 0.5059, 0.5059)
      nVertices = 100
      opacity [set every repeat] = 0.0
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (an2pix / 3, an2pix / 3)
      startVal [time (s)] = 0.0
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    TextComponent introduction_text
      letterHeight = an2pix * 0.6
      pos = (0, 2 * an2pix)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 10000
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    TextComponent back_text
      letterHeight = an2pix * 0.5
      pos = (0, -2 * an2pix)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent set_introduction
      Code Type = Both
      Each Frame:
        keys = [""]
        keys += event.getKeys(keyList=["space", "b"])

        if keys[-1] == "space":
            intro_state += 1
        if keys[-1] == "b":
            intro_state -= 1
        if intro_state < 0:
            intro_state = 0

        if intro_state == 0:
            introduction_text.text = 'The task is \n "To find a cat from animal images \n as soon as possible."'
            introduction_text.pos = (0, 2 * an2pix)
            back_text.text = 'Next: "Space" Key'
            back_text.pos = (0, -2 * an2pix)
            fixation_point.opacity = 0.0
        if intro_state == 1:
            introduction_text.text = 'Click the center circle to display a lineup of images.'
            introduction_text.pos = (0, 4.5 * an2pix)
            back_text.text = 'Next: "Space" Key \n Back: "b" Key'
            back_text.pos = (0, -4.5 * an2pix)
            fixation_point.opacity = 1.0
            for i in range(len(image_list)):
                image_list[i].opacity = 0.0
        if intro_state == 2:
            introduction_text.text = 'When you find a cat, click your mouse. \n\n The time limit is 10 sec on each trial.'
            introduction_text.pos = (9 * an2pix, 0)
            back_text.pos = (-9 * an2pix, 0)
            for i in range(len(image_list)):
                image_list[i].opacity = 1.0
            stimuli_arrangement.opacity = 0.0
            for i in range(len(ans_list)):
                ans_list[i].text = ''
        if intro_state == 3:
            introduction_text.text = 'Then, click a number \n corresponding to \n the position.'
            fixation_point.opacity = 0.0
            stimuli_arrangement.opacity = 1.0
            for i in range(len(ans_list)):
                ans_list[i].text = ans_text_list[i]
        if intro_state == 4:
            fixation_point.opacity = 1.0
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["space", "b"]});

        if (keys.slice(-1)[0] === "space") {
            intro_state += 1;
        }
        if (keys.slice(-1)[0] === "b") {
            intro_state -= 1;
        }
        if (intro_state < 0) {
            intro_state = 0;
        }

        if (intro_state === 0) {
            introduction_text.text = "The task is \n \"To find a cat from animal images \n as soon as possible.\" ";
            introduction_text.pos = [0, (2 * an2pix)];
            back_text.text = "Next: \"Space\" Key";
            back_text.pos = [0, ((- 2) * an2pix)];
            fixation_point.opacity = 0.0;
        }
        if (intro_state === 1) {
            introduction_text.text = "Click the center circle to display a lineup of images.";
            introduction_text.pos = [0, (4.5 * an2pix)];
            back_text.text = "Next: \"Space\" Key \n Back: \"b\" Key";
            back_text.pos = [0, ((- 4.5) * an2pix)];
            fixation_point.opacity = 1.0;
            for (var i = 0, _pj_a = image_list.length; (i < _pj_a); i += 1) {
                image_list[i].opacity = 0.0;
            }
        }
        if (intro_state === 2) {
            introduction_text.text = "When you find a cat, \n click your mouse. \n\n The time limit is 10 sec \n on each trial.";
            introduction_text.pos = [(9 * an2pix), 0];
            back_text.pos = [((- 9) * an2pix), 0];
            for (var i = 0, _pj_a = image_list.length; (i < _pj_a); i += 1) {
                image_list[i].opacity = 1.0;
            }
            stimuli_arrangement.opacity = 0.0;
            for (var i = 0, _pj_a = ans_list.length; (i < _pj_a); i += 1) {
                ans_list[i].text = "";
            }
        }
        if (intro_state === 3) {
            introduction_text.text = "Then, click a number \n corresponding to \n the position.";
            fixation_point.opacity = 0.0;
            stimuli_arrangement.opacity = 1.0;
            for (var i = 0, _pj_a = ans_list.length; (i < _pj_a); i += 1) {
                ans_list[i].text = ans_text_list[i];
            }
        }
        if (intro_state === 4) {
            fixation_point.opacity = 1.0;
            continueRoutine = false;
        }
  Routine practiceIntro
    TextComponent introduction_text_p
      letterHeight = an2pix * 0.7
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 10000
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      text:
        Let's practice with sample images.

        Hit “Space” key when ready.
    KeyboardComponent practice_info_key_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine showStim
    CodeComponent update_idx_list
      Code Type = Both
      Begin JS Experiment:
        var idx;
        var idx_list;
      Begin JS Routine:
        if ((currentLoop.name == "ActualTrials") && ((count % 48) === 0)) {
            if (count == 288) {
                idx = range(101, 136);
                idx = idx.map(x => x.toString().slice(1));
                idx_list = {};
                for (var i = 0, _pj_a = non_target_classes.length; (i < _pj_a); i += 1) {
                    idx_list[non_target_classes[i]] = shuffle(idx);
                }
                idx_list[target_class] = shuffle(idx);
            } else {
                idx = range(101, 148);
                idx = idx.map(x => x.toString().slice(1));
                idx_list = {};
                for (var i = 0, _pj_a = non_target_classes.length; (i < _pj_a); i += 1) {
                    idx_list[non_target_classes[i]] = shuffle(idx);
                }
                idx_list[target_class] = shuffle(idx);
            }
        }
      Begin Routine:
        if currentLoop.name == 'ActualTrials' and ActualTrials.thisTrialN % 48 == 0:
            if ActualTrials.thisTrialN == 288:
                idx_list = calc_idx_list(non_target_classes, target_class, 36)
            else:
                idx_list = calc_idx_list(non_target_classes, target_class, 48)
    CodeComponent change_nontarget
      Code Type = Both
      Before Experiment:
        from PIL import Image
      Begin JS Routine:
        _non_target_classes = shuffle(non_target_classes);
        for (var i = 0, _pj_a = image_list.length; (i < _pj_a); i += 1) {
            if (currentLoop.name == "PracticeTrials") {
                image_path = "imagenet/" + _non_target_classes[i] + "/image" + (Math.floor(Math.random() * (149 - 101)) + 101).toString().slice(1) + ".png";
            } else {
                image_path = "imagenet/" + _non_target_classes[i] + "/image" + idx_list[_non_target_classes[i]][count % 48] + ".png";
            }
            image_list[i].setImage(image_path);

            thisExp.addData(_non_target_classes[i], image_path);
        }
      Begin Routine:
        _non_target_classes = random.sample(non_target_classes, len(non_target_classes))
        for i in range(len(image_list)):
            if currentLoop.name == 'PracticeTrials':
                image_path = 'html/resources/imagenet/' + _non_target_classes[i] + '/image' + str(random.randrange(101, 149))[1:] + '.png'
            else:
                image_path = 'html/resources/imagenet/' + _non_target_classes[i] + '/image' + idx_list[_non_target_classes[i]][ActualTrials.thisTrialN % 48] + '.png'
            image_list[i].image = Image.open(image_path)

            thisExp.addData(_non_target_classes[i], image_path)
    CodeComponent change_target
      Code Type = Both
      Begin JS Routine:
        if (currentLoop.name == "PracticeTrials") {
            image_path = "imagenet/" + target_class + "/image" + (Math.floor(Math.random() * (149 - 101)) + 101).toString().slice(1) + ".png";
        } else {
            image_path = "imagenet/" + target_class + "/image" + idx_list[target_class][count % 48] + ".png";
        }
        image_list[4 * pos + ori].setImage(image_path);

        thisExp.addData(target_class, image_path);
      Begin Routine:
        if currentLoop.name == 'PracticeTrials':
            image_path = 'html/resources/imagenet/' + target_class + '/image' + str(random.randrange(101, 149))[1:] + '.png'
        else:
            image_path = 'html/resources/imagenet/' + target_class + '/image' + idx_list[target_class][ActualTrials.thisTrialN % 48] + '.png'
        image_list[4 * pos + ori].image = Image.open(image_path)

        thisExp.addData(target_class, image_path)
    CodeComponent change_size
      Code Type = Both
      Begin Experiment:
        base_size = [1.277, 1.437, 5.344]
        rate = [1/1.5, 1, 1.5]
      Begin JS Experiment:
        base_size = [1.277, 1.437, 5.344];
        rate = [1/1.5, 1, 1.5];
      Begin JS Routine:
        for (var i = 0, _pj_a = image_list.length; (i < _pj_a); i += 1) {
            image_list[i].size = [base_size[0] * rate[size_0] * an2pix, base_size[0] * rate[size_0] * an2pix];
            if ((4 <= i) && (i < 8)) {
                image_list[i].size = [base_size[1] * rate[size_1]  * an2pix, base_size[1] * rate[size_1] * an2pix];
            } else {
                if (i >= 8) {
                    image_list[i].size = [base_size[2] * rate[size_2] * an2pix, base_size[2] * rate[size_2] * an2pix];
                }
            }
        }
      Begin Routine:
        for i in range(len(image_list)):
            image_list[i].size = (base_size[0] * rate[size_0] * an2pix, base_size[0] * rate[size_0] * an2pix)
            if 4 <= i < 8:
                image_list[i].size = (base_size[1] * rate[size_1] * an2pix, base_size[1] * rate[size_1] * an2pix)
            elif i >= 8:
                image_list[i].size = (base_size[2] * rate[size_2] * an2pix, base_size[2] * rate[size_2] * an2pix)
    CodeComponent draw_and_flip
      Code Type = Both
      Begin JS Routine:
        fixation_point.setAutoDraw(true);
      Each Frame:
        fixation_point.draw()

        if showStimClock.getTime() > 1:
            for i in range(len(image_list)):
                image_list[i].draw()
      Each JS Frame:
        if (showStimClock.getTime() > 1) {
            for (var i = 0, _pj_a = image_list.length; (i < _pj_a); i += 1) {
                image_list[i].setAutoDraw(true);
            }
        }
      End JS Routine:
        fixation_point.setAutoDraw(false);

        for (var i = 0, _pj_a = image_list.length; (i < _pj_a); i += 1) {
            image_list[i].setAutoDraw(false);
        }
    KeyboardComponent show_stim_key_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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    CodeComponent store_rt
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('reactionTime', showStimClock.getTime() - 1)
    CodeComponent force_change
      Code Type = Auto->JS
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      Each Frame:
        if showStimClock.getTime() > 11:
            continueRoutine = False
  Routine askQuestion
    TextComponent question_text
      letterHeight = an2pix * 0.7
      pos = (10 * an2pix, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 10000
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      text:
        Where was the cat?
        Please click the number.
    CodeComponent place_arrangement
      Code Type = Both
      Begin JS Routine:
        stimuli_arrangement.setAutoDraw(true);
      Each Frame:
        stimuli_arrangement.draw()
      End JS Routine:
        stimuli_arrangement.setAutoDraw(false);
    CodeComponent place_ans_text
      Code Type = Both
      Begin JS Routine:
        for (var i = 0, _pj_a = ans_list.length; (i < _pj_a); i += 1) {
            ans_list[i].text = ans_text_list[i];
        }

        for (var i = 0, _pj_a = ans_list.length; (i < _pj_a); i += 1) {
            ans_list[i].setAutoDraw(true);
        }
      Begin Routine:
        for i in range(len(ans_list)):
            ans_list[i].text = ans_text_list[i]
      Each Frame:
        for i in range(len(ans_list)):
            ans_list[i].draw()
      End JS Routine:
        for (var i = 0, _pj_a = ans_list.length; (i < _pj_a); i += 1) {
            ans_list[i].setAutoDraw(false);
        }
    MouseComponent ans_mouse
      clickable = eval("ans_0_0"), eval("ans_0_1"), eval("ans_0_2"), eval("ans_0_3"), eval("ans_1_0"), eval("ans_1_1"), eval("ans_1_2"), eval("ans_1_3"), eval("ans_2_0"), eval("ans_2_1"), eval("ans_2_2"), eval("ans_2_3")
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.1
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    CodeComponent set_mouse_2
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        mouse.setVisible(True)
      End JS Routine:
        document.body.style.cursor='none';
      End Routine:
        mouse.setVisible(False)
  Routine showFeedback
    TextComponent feedback_text
      letterHeight = an2pix
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = feedback text
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    CodeComponent change_feedback
      Code Type = Both
      Begin JS Routine:
        if ((ans_to_pos[ans_mouse.clicked_name[0]][0] === pos) && (ans_to_pos[ans_mouse.clicked_name[0]][1] === ori)) {
            feedback_text.text = "Correct!";
            feedback_text.color = "springgreen";
            thisExp.addData("TF", "True");
        } else {
            feedback_text.text = "Wrong";
            feedback_text.color = "orangered";
            thisExp.addData("TF", "False");
        }
      Begin Routine:
        if ans_to_pos[ans_mouse.clicked_name[0]][0] == pos and ans_to_pos[ans_mouse.clicked_name[0]][1] == ori:
            feedback_text.text = 'Correct!'
            feedback_text.color = 'springgreen'
            thisExp.addData('TF', 'True')
        else:
            feedback_text.text = 'Wrong'
            feedback_text.color = 'orangered'
            thisExp.addData('TF', 'False')
      Each Frame:
        if showFeedbackClock.getTime() > 1:
            continueRoutine=False
      Each JS Frame:
        if (showFeedbackClock.getTime() > 1) {
            continueRoutine = false;
        }
    KeyboardComponent show_fb_key_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine takeBreak
    TextComponent break_text
      letterHeight = an2pix * 0.7
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      wrapWidth = 10000
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      text:
        Please take a short break.

        If the experiment is ready,
        the window will change to the fixation point.
    CodeComponent show_break_text
      Code Type = Both
      Begin JS Routine:
        count += 1;
        if (((count + 1) % 81) != 0) {
            continueRoutine = false;
        }
        if (count == 323) {
            continueRoutine = false;
        }
      Begin Routine:
        if (ActualTrials.thisTrialN + 1) % 81 != 0 or ActualTrials.thisTrialN == 323:
            continueRoutine=False
      Each Frame:
        # if takeBreakClock.getTime() > 30:
        #     continueRoutine = False
      Each JS Frame:
        // if ((takeBreakClock.getTime() > 30)) {
        //     continueRoutine = false;
        // }
  Routine publishSurveyCode
    TextComponent show_thanks_and_code
      letterHeight = an2pix * 0.7
      startVal [time (s)] = 0.0
      wrapWidth = 10000
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    CodeComponent create_code
      Code Type = Both
      Begin JS Routine:
        survey_code = "";
        for (var i = 0, _pj_a = 6; (i < _pj_a); i += 1) {
            survey_code += (Math.floor(Math.random() * 10)).toString();
        }
        show_thanks_and_code.text = (("The experiment has finished. \n Thank you for your patience. \n\n Your survey code is " + survey_code) + ". \n\n Please type this code to this experiment page \n on amazon mturk. \n If you done, press \"f\" key to finish the experiment.");
        thisExp.addData("surveyCode", survey_code);
      Begin Routine:
        survey_code = ''
        for i in range(6):
            survey_code += str(random.randrange(0, 10))

        show_thanks_and_code.text = 'The experiment has finished. \n Thank you for your patience. \n\n Your survey code is ' + survey_code + '. \n\n Please type this code to this experiment page \n on amazon mturk. \n If you done, press "f" key to finish the experiment.'
        thisExp.addData('surveyCode',survey_code)
    KeyboardComponent finish_key_resp
      allowedKeys = 'f'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine screenScale
  Routine expIntro
  Routine practiceIntro
  LoopInitiator PracticeTrials loopType="TrialHandler"
    conditionsFile = conditions/practiceConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'size_0': 0, 'size_1': 1, 'size_2': 0, 'pos': 0, 'ori': 0},
      {'size_0': 0, 'size_1': 1, 'size_2': 1, 'pos': 0, 'ori': 1},
      {'size_0': 0, 'size_1': 1, 'size_2': 2, 'pos': 1, 'ori': 2},
      {'size_0': 1, 'size_1': 1, 'size_2': 0, 'pos': 1, 'ori': 3},
      {'size_0': 1, 'size_1': 1, 'size_2': 1, 'pos': 2, 'ori': 0},
      {'size_0': 1, 'size_1': 1, 'size_2': 2, 'pos': 2, 'ori': 1},
      {'size_0': 2, 'size_1': 1, 'size_2': 0, 'pos': 0, 'ori': 2},
      {'size_0': 2, 'size_1': 1, 'size_2': 1, 'pos': 1, 'ori': 3},
      {'size_0': 2, 'size_1': 1, 'size_2': 2, 'pos': 2, 'ori': 0}]
    Routine gitter
    Routine showStim
    Routine askQuestion
    Routine showFeedback
  LoopTerminator PracticeTrials
  Routine actual_intro
  LoopInitiator ActualTrials loopType="TrialHandler"
    conditionsFile = conditions/expConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'size_0': 0, 'size_1': 0, 'size_2': 0, 'pos': 0, 'ori': 0},
      {'size_0': 0, 'size_1': 0, 'size_2': 0, 'pos': 0, 'ori': 1},
      {'size_0': 0, 'size_1': 0, 'size_2': 0, 'pos': 0, 'ori': 2},
      {'size_0': 0, 'size_1': 0, 'size_2': 0, 'pos': 0, 'ori': 3},
      {'size_0': 0, 'size_1': 0, 'size_2': 0, 'pos': 1, 'ori': 0},
      {'size_0': 0, 'size_1': 0, 'size_2': 0, 'pos': 1, 'ori': 1},
      {'size_0': 0, 'size_1': 0, 'size_2': 0, 'pos': 1, 'ori': 2},
      {'size_0': 0, 'size_1': 0, 'size_2': 0, 'pos': 1, 'ori': 3},
      {'size_0': 0, 'size_1': 0, 'size_2': 0, 'pos': 2, 'ori': 0},
      {'size_0': 0, 'size_1': 0, 'size_2': 0, 'pos': 2, 'ori': 1},
      {'size_0': 0, 'size_1': 0, 'size_2': 0, 'pos': 2, 'ori': 2},
      {'size_0': 0, 'size_1': 0, 'size_2': 0, 'pos': 2, 'ori': 3},
      {'size_0': 0, 'size_1': 0, 'size_2': 1, 'pos': 0, 'ori': 0},
      {'size_0': 0, 'size_1': 0, 'size_2': 1, 'pos': 0, 'ori': 1},
      {'size_0': 0, 'size_1': 0, 'size_2': 1, 'pos': 0, 'ori': 2},
      {'size_0': 0, 'size_1': 0, 'size_2': 1, 'pos': 0, 'ori': 3},
      {'size_0': 0, 'size_1': 0, 'size_2': 1, 'pos': 1, 'ori': 0},
      {'size_0': 0, 'size_1': 0, 'size_2': 1, 'pos': 1, 'ori': 1},
      {'size_0': 0, 'size_1': 0, 'size_2': 1, 'pos': 1, 'ori': 2},
      {'size_0': 0, 'size_1': 0, 'size_2': 1, 'pos': 1, 'ori': 3},
      {'size_0': 0, 'size_1': 0, 'size_2': 1, 'pos': 2, 'ori': 0},
      {'size_0': 0, 'size_1': 0, 'size_2': 1, 'pos': 2, 'ori': 1},
      {'size_0': 0, 'size_1': 0, 'size_2': 1, 'pos': 2, 'ori': 2},
      {'size_0': 0, 'size_1': 0, 'size_2': 1, 'pos': 2, 'ori': 3},
      {'size_0': 0, 'size_1': 0, 'size_2': 2, 'pos': 0, 'ori': 0}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
    Routine gitter
    Routine showStim
    Routine askQuestion
    Routine showFeedback
    Routine takeBreak
  LoopTerminator ActualTrials
  Routine publishSurveyCode
