PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test
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Routines
  Routine trial
    TextComponent text
      letterHeight = 1
      startVal [time (s)] = 0.0
      units = pix
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      text:
        This is the example of the stimuli.

        Before the stimuli presented,
        the fixation point is shown.

        When you hit 'space' Key,
        stimuli are presented.

        After that, you can move your eye.

        When you find the 'cat',
        hit a Key and answer the question,
        'Where was the cat?'

        You answer with the keyboard.

        Notice: When the stimuli are presented,
        please focus on the center of the display.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
